WorkflowBuilder(Version=2.6.2)
GroupWorkflow EssaySetup
    FloatProperty(Value=0)
    -> BehaviorSubject "z pos"

    IncludeWorkflow rawData(Path=Extensions\NidaqEncoder.bonsai)

    SubscribeSubject rawData
    -> IncludeWorkflow(Path=Extensions\TurnPositionCalculation.bonsai)
    -> Bonsai.Dsp.Difference(Order=1) => #5
    ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #6
    #5, #6 -> Multiply(Operand=DoubleProperty(Value=62.832))
    -> PublishSubject Encoder

    Disable IncludeWorkflow(Path=Extensions\MouseEncoder.bonsai, Gain=5)
    -> Disable PublishSubject Encoder

    StringProperty
    -> IgnoreElements
    -> BehaviorSubject OlfactometerCommands

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1) => #14
    -> BehaviorSubject tex0
    #14 -> BehaviorSubject tex1

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> BehaviorSubject StimOn

    BooleanProperty(Value=false)
    -> BehaviorSubject RewOn

    FloatProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject RewardLocation

    FloatProperty(Value=70)
    -> BehaviorSubject PopUpLocation0

    FloatProperty(Value=210)
    -> BehaviorSubject PopUpLocation1

    IncludeWorkflow BehaviorCommandBoardA(Path=Bonsai.Harp:CommandSubject.bonsai)

    GroupWorkflow HarpDeviceAndLogger
        Disable SubscribeSubject MissTrialsNumber => #0
        SubscribeSubject "z pos" => #1
        SubscribeSubject BehaviorCommandBoardA
        -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM11) => #3
        -> Bonsai.Harp.FilterMessage(Address=nil, MessageType=nil)
        -> Bonsai.Harp.DeviceEvent(Type=MessageTimestamp) => #5
        SubscribeSubject RewOn
        -> Bonsai.Scripting.ExpressionTransform "Convert Bool" => #7
          Expression: it? 1 : 0
        SubscribeSubject TrialNumber => #8
        #8, #0 -> Disable CombineLatest
        -> Disable Subtract
        #8 -> Add(Operand=IntProperty(Value=1)) => #11
        #5, #11 -> WithLatestFrom => #12
        #12, #1 -> WithLatestFrom => #13
        #13, #7 -> WithLatestFrom => #14
        #3 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #15
        SubscribeSubject StimOn
        -> Bonsai.Scripting.ExpressionTransform "Convert Bool" => #17
          Expression: it? 1 : 0
        #14, #17 -> WithLatestFrom => #18
        #18, #15 -> WithLatestFrom
        -> Disable Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

    IntProperty(Value=0)
    -> BehaviorSubject MissTrialsNumber

    IntProperty(Value=0)
    -> BehaviorSubject RewardTrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject HitsTrialsNumber

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1) => #38
    -> IgnoreElements
    -> BehaviorSubject TempTex0
    #38 -> IgnoreElements
    -> BehaviorSubject TempTex1

Bonsai.Shaders.CreateWindow
  Width=600
  Height=400
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> Disable Bonsai.Shaders.CreateWindow
  Width=4968
  Height=1536
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Hidden
  WindowState=Maximized
  DisplayDevice=First
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Disable BehaviorSubject<Bonsai.Shaders.Texture> Environment => #10
Disable Bonsai.Shaders.Input.KeyDown(Key=S, Modifiers=nil) => #11
#10, #11 -> Disable GroupWorkflow CalibrateLeft
    ExternalizedMapping => #0
      Width(Category="Screen Dimensions")
      Height(Category="Screen Dimensions")
      Rotation(Category="Screen Position")
      Translation(Category="Screen Position")
    WorkflowInput Source1 => #1
    #1, #0 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=52.5, Height=29.4, Rotation(X=0, Y=90, Z=0), Translation(X=-23.4, Y=-0.35, Z=3.95))
    -> WorkflowOutput
    WorkflowInput Source2 => #4
    ExternalizedMapping(ExtrinsicsFileName, IntrinsicsFileName, ScreenId) => #5
    #4, #0, #5 -> Disable IncludeWorkflow
      Path="Extensions\SaveCalibration .bonsai"
      ExtrinsicsFileName=Calibration/left_extrinsics.yml
      IntrinsicsFileName=Calibration/left_intrinsics.yml
      ScreenId=1
      Width=52.5
      Height=29.4
      Rotation(X=0, Y=1.5707963267948966, Z=0)
      Translation(X=-23.4, Y=-0.35, Z=3.95)
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.33333, Height=1)
#10, #11 -> Disable GroupWorkflow CalibrateFront
    ExternalizedMapping => #0
      Width(Category="Screen Dimensions")
      Height(Category="Screen Dimensions")
      Rotation(Category="Screen Position")
      Translation(Category="Screen Position")
    WorkflowInput Source1 => #1
    #1, #0 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=52.5, Height=29.4, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=-0.25, Z=-23))
    -> WorkflowOutput
    WorkflowInput Source2 => #4
    ExternalizedMapping(ExtrinsicsFileName, IntrinsicsFileName, ScreenId) => #5
    #4, #0, #5 -> Disable IncludeWorkflow
      Path="Extensions\SaveCalibration .bonsai"
      ExtrinsicsFileName=Calibration/front_extrinsics.yml
      IntrinsicsFileName=Calibration/front_intrinsics.yml
      ScreenId=2
      Width=52.5
      Height=29.4
      Rotation(X=0, Y=0, Z=0)
      Translation(X=0, Y=-0.25, Z=-23)
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.33333, Y=0, Width=0.33333, Height=1)

Disable Bonsai.Shaders.RenderFrame
-> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
-> Disable PublishSubject DrawDebug
-> Disable IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0)
-> Disable MulticastSubject Environment

Bonsai.Shaders.RenderFrame
-> Disable IncludeWorkflow
  Path=BonVision:Environment.PerspectiveView.bonsai
  Light(X=0, Y=1, Z=1)
  FieldOfView=81.63721
  Eye(X=0, Y=0, Z=0)
  Target(X=-0, Y=-0, Z=-1)
  Up(X=0, Y=1, Z=0)
  NearClip=0.1
  FarClip=1000
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #26
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=17, Rotation(X=0, Y=-53.0000003364945, Z=0), Translation(X=-6.5, Y=5, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1)
#26 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=17, Rotation(X=0, Y=53.0000003364945, Z=0), Translation(X=6.5, Y=5, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1)

GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(ScaleY, TranslationY) => #4
    ExternalizedMapping(Value(DisplayName=Width))
    -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=ScaleY, Value=20) => #6
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #8
    #6 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #10
    #6 -> PropertyMapping(ScaleX) => #11
    #3, #11 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn4, TextureTarget=Texture2D) => #3
        #3, #1 -> GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-3, Z=133.51239) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=900, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0, Y=0, Z=0, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput
        -> WorkflowOutput
    #2, #4, #8 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-35
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        SubscribeSubject tex0
        -> PropertyMapping(TextureName(Selector=it)) => #7
        #2, #3, #4, #5 -> GroupWorkflow Left0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=98.51239
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-105
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #3, #4, #5, #7 -> GroupWorkflow Left1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=horGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=28.51239
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-175
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        #13, #3, #4, #5 -> GroupWorkflow Left2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-41.48761
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-245
        -> PropertyMapping(TranslationZ(Selector=it)) => #16
        SubscribeSubject tex1
        -> PropertyMapping(TextureName(Selector=it)) => #18
        #16, #3, #4, #5, #18 -> GroupWorkflow Left3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-111.48761
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-315
        -> PropertyMapping(TranslationZ(Selector=it)) => #21
        #21, #3, #4, #5 -> GroupWorkflow Left4
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-181.48761
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-360
        -> PropertyMapping(TranslationZ(Selector=it)) => #24
        #24, #3, #4, #5 -> GroupWorkflow Left5
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-226.48761
              ScaleX=20
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-385
        -> PropertyMapping(TranslationZ(Selector=it)) => #27
        #27, #3, #4, #5 -> GroupWorkflow Left6
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-251.48761
              ScaleX=30
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-550
        -> PropertyMapping(TranslationZ(Selector=it)) => #30
        #30, #3, #4, #5 -> GroupWorkflow Left7
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-416.4876
              ScaleX=300
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #2, #4, #10 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-35
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        SubscribeSubject tex0
        -> PropertyMapping(TextureName) => #7
        #2, #3, #4, #5 -> GroupWorkflow Right0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=98.51239
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-105
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #3, #4, #5, #7 -> GroupWorkflow Right1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=horGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=28.51239
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-175
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        #13, #3, #4, #5 -> GroupWorkflow Right2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-41.48761
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-245
        -> PropertyMapping(TranslationZ(Selector=it)) => #16
        SubscribeSubject tex1
        -> PropertyMapping(TextureName) => #18
        #16, #3, #4, #5, #18 -> GroupWorkflow Right3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-111.48761
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-315
        -> PropertyMapping(TranslationZ(Selector=it)) => #21
        #21, #3, #4, #5 -> GroupWorkflow Right4
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-181.48761
              ScaleX=70
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-360
        -> PropertyMapping(TranslationZ(Selector=it)) => #24
        #24, #3, #4, #5 -> GroupWorkflow Right5
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-226.48761
              ScaleX=20
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-385
        -> PropertyMapping(TranslationZ(Selector=it)) => #27
        #27, #3, #4, #5 -> GroupWorkflow Right6
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-251.48761
              ScaleX=30
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-550
        -> PropertyMapping(TranslationZ(Selector=it)) => #30
        #30, #3, #4, #5 -> GroupWorkflow Right7
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-416.4876
              ScaleX=300
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput

Disable GroupWorkflow Texture1
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it+20
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(TextureName) => #4
    #3, #4 -> GroupWorkflow Ceil
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5.98
          TranslationZ=-80
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #6
    #6, #4 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.98
          TranslationZ=-80
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #8
    #8, #4 -> GroupWorkflow Right
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=3.88
          TranslationY=2
          TranslationZ=-80
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
    #10, #4 -> GroupWorkflow Left
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-3.88
          TranslationY=2
          TranslationZ=-80
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

Disable GroupWorkflow Texture2
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it+40
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(TextureName) => #4
    #3, #4 -> GroupWorkflow Ceil
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5.98
          TranslationZ=-60
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #6
    #6, #4 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.98
          TranslationZ=-60
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #8
    #8, #4 -> GroupWorkflow Right
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=3.977
          TranslationY=2
          TranslationZ=-60
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
    #10, #4 -> GroupWorkflow Left
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-3.88
          TranslationY=2
          TranslationZ=-60
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

Disable GroupWorkflow Texture3
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it+60
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(TextureName) => #4
    #3, #4 -> GroupWorkflow Ceil
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5.98
          TranslationZ=-40
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #6
    #6, #4 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.98
          TranslationZ=-40
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #8
    #8, #4 -> GroupWorkflow Right
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=3.97
          TranslationY=2
          TranslationZ=-40
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
    #10, #4 -> GroupWorkflow Left
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-3.88
          TranslationY=2
          TranslationZ=-40
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

Disable GroupWorkflow Texture4
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it+80
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(TextureName) => #4
    #3, #4 -> GroupWorkflow Ceil
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5.98
          TranslationZ=-20
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #6
    #6, #4 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.98
          TranslationZ=-20
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #8
    #8, #4 -> GroupWorkflow Right
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=3.97
          TranslationY=2
          TranslationZ=-20
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
    #10, #4 -> GroupWorkflow Left
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-3.88
          TranslationY=2
          TranslationZ=-20
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany Initialize
    WorkflowInput Source1
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany RunTime
    Bonsai.IO.CsvReader(FileName=Protocols\TrialSequence.csv, ScanPattern="%l,%s,%s,%l,%l,", SkipRows=1)
    -> CreateObservable
        WorkflowInput Source1 => #0
        -> SelectMany StimRewControl
            SubscribeSubject "z pos" => #0
            SubscribeSubject RewardLocation
            -> DistinctUntilChanged => #2
            -> Subtract(Operand=DoubleProperty(Value=50))
            -> PropertyMapping(SlowDownLocation) => #4
            #2 -> PropertyMapping(RewardLocation) => #5
            #0, #5, #4 -> GroupWorkflow RewardCondition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=SlowDownLocation)) => #1
                #0, #1 -> SkipWhile => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=4950))
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=VelocityThreshold)) => #3
                ExternalizedMapping(Value(DisplayName=RewardLocation)) => #4
                #2, #4 -> TakeWhile => #5
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThan(Operand=FloatProperty(Value=5000))
                    -> WorkflowOutput
                -> Bonsai.Dsp.Difference(Order=1)
                -> Accumulate
                -> TakeLast(Count=1)
                -> Bonsai.Scripting.ExpressionTransform => #9
                  Expression: Single(it)
                #5 -> Count
                -> Subtract(Operand=IntProperty(Value=1)) => #11
                #9, #11 -> Zip
                -> Divide
                -> Multiply(Operand=FloatProperty(Value=1000)) => #14
                #14, #3 -> LessThan(Operand=FloatProperty(Value=35))
                -> WorkflowOutput
            -> Take(Count=1) => #7
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> GroupWorkflow Reward
                ExternalizedMapping(DueTime(DisplayName=RewardDuration)) => #0
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital0)
                -> MulticastSubject BehaviorCommandBoardA
                -> Sink RewUp => #4
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                #4, #0 -> Delay(DueTime=PT0.14S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital0)
                -> MulticastSubject BehaviorCommandBoardA
                -> Sink RewDown
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            -> Take(Count=1) => #10
            #7 -> Condition => #11
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            SubscribeSubject MissTrialsNumber
            -> PropertyMapping(Value) => #13
            #11, #13 -> IntProperty(Value=0)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject MissTrialsNumber
            -> BooleanProperty(Value=true)
            -> GroupWorkflow NoReward => #18
                WorkflowInput Source1
                -> WorkflowOutput
            #10, #18 -> Merge
            -> Take(Count=1)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Port0)
            -> MulticastSubject BehaviorCommandBoardA
            -> Sink RewDown
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject RewOn
                -> WorkflowOutput
            #0 -> Skip(Count=1) => #24
            SubscribeSubject PopUpLocation0
            -> DistinctUntilChanged
            -> PropertyMapping(Value) => #27
            #27, #24 -> GreaterThanOrEqual(Operand=FloatProperty(Value=70))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable Condition
                WorkflowInput Source1 => #0
                SubscribeSubject CatchTrial
                -> PropertyMapping(Value) => #2
                #0, #2 -> BooleanProperty(Value=true)
                -> WorkflowOutput
            -> First
            -> Disable DistinctUntilChanged
            -> GroupWorkflow stimulusOnset
                WorkflowInput Source1 => #0
                SubscribeSubject TempTex0
                -> MulticastSubject tex0 => #2
                #2, #0 -> SubscribeWhen
                -> WorkflowOutput
            -> Disable GroupWorkflow stimuluOffset
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable First
            -> Disable Sink StimOff
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject StimOn
                -> WorkflowOutput
            SubscribeSubject PopUpLocation1
            -> DistinctUntilChanged
            -> PropertyMapping(Value) => #39
            #39, #24 -> GreaterThanOrEqual(Operand=FloatProperty(Value=210))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable Condition
                WorkflowInput Source1 => #0
                SubscribeSubject CatchTrial
                -> PropertyMapping(Value) => #2
                #0, #2 -> BooleanProperty(Value=true)
                -> WorkflowOutput
            -> First
            -> DistinctUntilChanged
            -> GroupWorkflow stimulusOnset
                WorkflowInput Source1 => #0
                SubscribeSubject TempTex1
                -> MulticastSubject tex1 => #2
                #2, #0 -> SubscribeWhen
                -> WorkflowOutput
            -> Disable GroupWorkflow stimuluOffset
                WorkflowInput Source1
                -> WorkflowOutput
            -> First
            -> Sink StimOff
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject StimOn
                -> WorkflowOutput
        #0 -> Take(Count=1) => #2
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject TempTex0
        -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1)
        -> MulticastSubject tex0
        #2 -> MemberSelector(Selector=Item3)
        -> MulticastSubject TempTex1
        -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1)
        -> MulticastSubject tex1
        #2 -> MemberSelector(Selector=Item5)
        -> MulticastSubject RewardLocation

        GroupWorkflow Movement
            SubscribeSubject Encoder
            -> Accumulate
            -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> Add(Operand=DoubleProperty(Value=0))
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MulticastSubject "z pos"
            -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=400))
                -> WorkflowOutput
            -> Unit
            -> WorkflowOutput

            Disable Condition
                WorkflowInput Source1
                -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
        -> Last => #14
        Disable SubscribeSubject TrialNumber => #15
        #14, #15 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Add(Operand=IntProperty(Value=1))
        -> Disable MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Concat
    -> Last
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1
    -> WorkflowOutput
