<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM11</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>AnalogInput</p1:Type>
        <p1:Mask>Port0</p1:Mask>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="minValueNormalization" />
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="DoubleProperty">
          <Value>0.0819716981081552</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="scaleNormalization" />
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>1.02419429447844</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>rawData</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="7" Label="Source2" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>