<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>rawData</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it as Position,
0.0 as Diference,
2 as Turns)</scr:Expression>
      </Expression>
      <Expression xsi:type="Scan">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Position</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt; 1 ? 1.0 : it &lt; -1 ? -1.0 : 0.0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2.Value.Position as Position,
Item1 as Diference,
Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 &gt; 0 ? -1 : (Item1 &lt; 0 ? 1 : 0)))) as Turns)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Position+(Turns*4.9)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Butterworth">
          <dsp:SampleRate>1000</dsp:SampleRate>
          <dsp:Cutoff1>10</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:FilterOrder>3</dsp:FilterOrder>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>25</dsp:Count>
          <dsp:Skip>1</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="8" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="3" To="9" Label="Source2" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>