WorkflowBuilder(Version=2.6.2)
GroupWorkflow EssaySetup
    ExternalizedMapping(Value(DisplayName=RewardSize))
    -> IntProperty(Value=4)
    -> BehaviorSubject RewardSize

    IncludeWorkflow BehaviorCommandBoard(Path=Bonsai.Harp:CommandSubject.bonsai)

    GroupWorkflow HarpDevice
        SubscribeSubject "z pos" => #0
        SubscribeSubject TrialNumber => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject BehaviorCommandBoard
        -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=Off, VisualIndicators=Off, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #4
        -> Bonsai.Harp.FilterMessage(Address=nil, MessageType=nil)
        -> Bonsai.Harp.DeviceEvent(Type=MessageTimestamp) => #6
        #6, #1 -> WithLatestFrom => #7
        #6 -> MulticastSubject HarpTimestamp
        #4 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #9
        #9, #7 -> WithLatestFrom => #10
        #10, #0 -> WithLatestFrom => #11
        #9 -> PublishSubject rawData
        #4 -> MemberSelector(Selector=MessageBytes)
        -> BehaviorSubject RawHarpData
        SubscribeSubject RunSpeed => #15
        #11, #15 -> WithLatestFrom => #16
        SubscribeSubject LickActivity => #17
        #16, #17 -> WithLatestFrom => #18
        SubscribeSubject RewTimestamp => #19
        #18, #19 -> WithLatestFrom
        -> BehaviorSubject HarpData

    FloatProperty(Value=0)
    -> BehaviorSubject "z pos"

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    FloatProperty(Value=100)
    -> BehaviorSubject StimStart

    FloatProperty(Value=100)
    -> BehaviorSubject StimEnd

    FloatProperty(Value=180)
    -> BehaviorSubject TunnelLength

    ExternalizedMapping(Value(DisplayName=tex_BG))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=BG) => #16
    -> BehaviorSubject tex_BG_1
    #16 -> BehaviorSubject tex_BG_3
    #16 -> BehaviorSubject tex_BG_2

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=A)
    -> BehaviorSubject tex_Stim_Left

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=A)
    -> BehaviorSubject tex_Stim_Right

    FloatProperty(Value=200)
    -> BehaviorSubject RewardZoneStart

    FloatProperty(Value=250)
    -> BehaviorSubject RewardZoneEnd

    FloatProperty(Value=0.5)
    -> BehaviorSubject StimContrast

    IntProperty(Value=0)
    -> BehaviorSubject RewardTrial

    BooleanProperty(Value=false)
    -> BehaviorSubject InRewardZone

    BooleanProperty(Value=false)
    -> BehaviorSubject lickResponse

    StringProperty
    -> BehaviorSubject trialOutcome

    ExternalizedMapping(Value(DisplayName=RewardZoneLength))
    -> FloatProperty(Value=25)
    -> BehaviorSubject RewardZoneLength

    ExternalizedMapping(Value(DisplayName=RewardZoneOffset))
    -> FloatProperty(Value=25)
    -> BehaviorSubject RewardZoneOffset

    FloatProperty(Value=0)
    -> BehaviorSubject RunSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotReward

    FloatProperty(Value=0)
    -> BehaviorSubject TotDistance

    FloatProperty(Value=0.1)
    -> BehaviorSubject RotEncMin

    FloatProperty(Value=4.7)
    -> BehaviorSubject RotEncMax

    IntProperty(Value=0)
    -> BehaviorSubject nLicks

    DoubleProperty(Value=0)
    -> BehaviorSubject HarpTimestamp

    DoubleProperty(Value=0)
    -> BehaviorSubject RewTimestamp

    ExternalizedMapping(Value(DisplayName=StimSize))
    -> FloatProperty(Value=25)
    -> BehaviorSubject StimSize

    ExternalizedMapping(Value(DisplayName=StimIntervalStart))
    -> FloatProperty(Value=50)
    -> BehaviorSubject StimIntervalStart

    ExternalizedMapping(Value(DisplayName=StimIntervalEnd))
    -> FloatProperty(Value=80)
    -> BehaviorSubject StimIntervalEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveReward

    ExternalizedMapping(Value(DisplayName=PassiveRewOn))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject PassiveRewOn

    BooleanProperty(Value=false)
    -> BehaviorSubject TimeOut

    ExternalizedMapping(Value(DisplayName=UseTimeOut))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject UseTimeOut

    DoubleProperty(Value=0)
    -> BehaviorSubject TimeOutTimestamp

ExternalizedMapping(MouseName)
-> GroupWorkflow Logger
    ExternalizedMapping(Value(DisplayName=MouseName)) => #0
    -> StringProperty(Value=test) => #1
    #0 -> StringProperty(Value=test) => #2
    StringProperty(Value=VR) => #3
    StringProperty(Value=C:\Data\MOL\) => #4
    StringProperty(Value=Behavior) => #5
    #4 -> Timestamp
    -> MemberSelector(Selector="Timestamp.Year,Timestamp.Month,Timestamp.Day")
    -> Bonsai.Scripting.ExpressionTransform => #8
      Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2") + "\"
    #4, #1, #8, #3, #5, #2 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\" + Item5.ToString() + "\" + Item4.ToString() + "_" + Item6.ToString() + "_"
    -> ReplaySubject SaveFilename(BufferSize=nil)

    SubscribeSubject HarpData => #12
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=harp_.csv))
    -> PropertyMapping(FileName) => #15
    #12, #15 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\test\2023_11_08\\VR\Behavior\VR_test_harp_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject RawHarpData => #17
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=rawharp_.bin))
    -> PropertyMapping(Path) => #20
    #17, #20 -> Bonsai.Dsp.MatrixWriter(Path=C:\Data\MOL\test\2023_11_08\\VR\Behavior\VR_test_rawharp_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject TrialNumber => #22
    SubscribeSubject RewardTrial => #23
    SubscribeSubject StimStart => #24
    SubscribeSubject RewardZoneStart => #25
    SubscribeSubject RewardZoneEnd => #26
    SubscribeSubject trialOutcome
    -> Skip(Count=1) => #28
    #28, #22 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #30
    SubscribeSubject lickResponse => #31
    SubscribeSubject nLicks => #32
    SubscribeSubject StimContrast => #33
    SubscribeSubject tex_Stim_Left
    -> Bonsai.Scripting.ExpressionTransform => #35
      Expression: it.ToString()
    SubscribeSubject tex_Stim_Right
    -> Bonsai.Scripting.ExpressionTransform => #37
      Expression: it.ToString()
    SubscribeSubject HarpTimestamp => #38
    #30, #38 -> WithLatestFrom => #39
    #39, #33 -> WithLatestFrom => #40
    #40, #23 -> WithLatestFrom => #41
    #41, #24 -> WithLatestFrom => #42
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=trialdata_.csv))
    -> PropertyMapping(FileName) => #45
    SubscribeSubject StimEnd => #46
    #42, #46 -> WithLatestFrom => #47
    #47, #25 -> WithLatestFrom => #48
    #48, #26 -> WithLatestFrom => #49
    #49, #31 -> WithLatestFrom => #50
    #50, #32 -> WithLatestFrom => #51
    SubscribeSubject trialOutcome => #52
    #51, #52 -> WithLatestFrom => #53
    #53, #35 -> WithLatestFrom => #54
    #54, #37 -> WithLatestFrom
    -> Bonsai.Scripting.ExpressionTransform => #56
      Expression:
        new(Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as TrialNumber,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as tEnd,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as trialType,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Reward,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as StimStart,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as StimEnd,
            Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewardZoneStart,
            Item1.Item1.Item1.Item1.Item1.Item2 as RewardZoneEnd,
            Item1.Item1.Item1.Item1.Item2 as lickResponse,
            Item1.Item1.Item1.Item2 as nLicks,
            Item1.Item1.Item2 as trialOutcome,
            Item1.Item2 as stimLeft,
            Item2 as stimRight)
    #45, #56 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\test\2023_11_08\\VR\Behavior\VR_test_trialdata_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject CameraImage => #58
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=camera_.avi))
    -> PropertyMapping(FileName) => #61
    #58, #61 -> Bonsai.Vision.VideoWriter
      FileName=C:\Data\MOL\test\2023_11_08\\VR\Behavior\VR_test_camera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    SubscribeSubject CameraMetadata => #63
    SubscribeSubject HarpTimestamp => #64
    #63, #64 -> WithLatestFrom => #65
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=cameracsv_.csv))
    -> PropertyMapping(FileName) => #68
    #65, #68 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\test\2023_11_08\\VR\Behavior\VR_test_cameracsv_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject TriggerData => #70
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=triggerdata_.csv))
    -> PropertyMapping(FileName) => #73
    #70, #73 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\test\2023_11_08\\VR\Behavior\VR_test_triggerdata_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

Bonsai.Shaders.CreateWindow
  Width=6144
  Height=1536
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=First
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\BG_gratings.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=A
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\A\jpg\A_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=B
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\B\B_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=C
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\C\C_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=D
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\D\D_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=Ori45
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\Ori45\Ori45_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=Ori135
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\Ori135\Ori135_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.Texture2D(Name=Cat, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
-> Disable Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\BG_gratings.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=A
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\A\A_%03d.png
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=B
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\B\B_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=C
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\C\C_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=D
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\D\D_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=Ori45
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\Ori45\Ori45_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=Ori135
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\Ori135\Ori135_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.Texture2D(Name=Cat, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #15
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-10.5, Y=2, Z=0))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.3333, Height=1)
#15 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=10.51, Height=8, Rotation(X=0, Y=-15.000000417413029, Z=0), Translation(X=-5.1, Y=2, Z=-10.5))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.33333, Y=0, Width=0.167, Height=1)
#15 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=10.51, Height=8, Rotation(X=0, Y=15.000000417413029, Z=0), Translation(X=5.1, Y=2, Z=-10.5))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.1667, Height=1)
#15 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=10.5, Y=2, Z=0))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666, Y=0, Width=0.3333, Height=1)
-> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

Timer(DueTime=PT1S, Period=PT0S)
-> SelectMany Initialize
    WorkflowInput Source1 => #0
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    -> WorkflowOutput
    #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard
    #0 -> Disable Int64Property(Value=0) => #9
    Disable SubscribeSubject HarpTimestamp => #10
    #9, #10 -> Disable WithLatestFrom
    -> Disable MulticastSubject TriggerData
-> TakeLast(Count=1) => #27
ExternalizedMapping(FileName(DisplayName=ProtocolName)) => #28
#27, #28 -> SelectMany NewTrial
    ExternalizedMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=Protocols\VR_Detection\MOL_trialseq_detection_5levels.csv, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=1)
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialNumber
        #1 -> MemberSelector(Selector=Item2)
        -> MulticastSubject StimContrast
        #1 -> MemberSelector(Selector=Item3)
        -> MulticastSubject RewardTrial
        #1 -> IntProperty(Value=0)
        -> MulticastSubject nLicks
        #1 -> BooleanProperty(Value=false)
        -> MulticastSubject TimeOut
        #1 -> Bonsai.Numerics.CreateRandom(Seed=nil) => #12
        SubscribeSubject RewardZoneLength => #13
        SubscribeSubject RewardZoneOffset => #14
        SubscribeSubject StimIntervalEnd
        -> PropertyMapping(Upper) => #16
        SubscribeSubject StimIntervalStart
        -> PropertyMapping(Lower) => #18
        #12, #18, #16 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=50, Upper=80)
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject StimStart => #21
        #21, #14 -> WithLatestFrom
        -> Add
        -> MulticastSubject RewardZoneStart => #24
        #24, #13 -> WithLatestFrom
        -> Add
        -> MulticastSubject RewardZoneEnd
        -> Add(Operand=FloatProperty(Value=2))
        -> MulticastSubject TunnelLength
        SubscribeSubject StimSize => #30
        #21, #30 -> WithLatestFrom
        -> Add
        -> MulticastSubject StimEnd

        GroupWorkflow TunnelPos
            SubscribeSubject Encoder
            -> Accumulate
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MulticastSubject "z pos" => #3
            SubscribeSubject TunnelLength
            -> PropertyMapping(Value) => #5
            #3, #5 -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=103))
                -> WorkflowOutput
            -> WorkflowOutput
        -> Last => #35
        -> WorkflowOutput
        #35 -> Condition FA
            WorkflowInput Source1 => #0
            SubscribeSubject RewardTrial
            -> Equal(Operand=IntProperty(Value=0)) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject lickResponse
            -> Equal(Operand=BooleanProperty(Value=true)) => #6
            #4, #6 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        -> StringProperty(Value=FA)
        -> MulticastSubject trialOutcome
        #35 -> Condition HIT
            SubscribeSubject RewardTrial
            -> Equal(Operand=IntProperty(Value=1)) => #1
            WorkflowInput Source1 => #2
            #2, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject lickResponse
            -> Equal(Operand=BooleanProperty(Value=true)) => #6
            #4, #6 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        -> StringProperty(Value=HIT)
        -> MulticastSubject trialOutcome
        #35 -> Condition MISS
            WorkflowInput Source1 => #0
            SubscribeSubject RewardTrial
            -> Equal(Operand=IntProperty(Value=1)) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject lickResponse
            -> Equal(Operand=BooleanProperty(Value=false)) => #6
            #4, #6 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        -> StringProperty(Value=MISS)
        -> MulticastSubject trialOutcome
        #35 -> Condition CR
            WorkflowInput Source1 => #0
            SubscribeSubject RewardTrial
            -> Equal(Operand=IntProperty(Value=0)) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject lickResponse
            -> Equal(Operand=BooleanProperty(Value=false)) => #6
            #4, #6 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        -> StringProperty(Value=CR)
        -> MulticastSubject trialOutcome

        SubscribeSubject GiveReward
        -> Skip(Count=1)
        -> GroupWorkflow Reward
            WorkflowInput Source1 => #0
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
            -> MulticastSubject BehaviorCommandBoard => #2
            SubscribeSubject TotReward => #3
            SubscribeSubject HarpTimestamp => #4
            Bonsai.IO.CsvReader(FileName=PCVars\RewardCalibration.csv, ListSeparator="", ScanPattern="%f,%f", SkipRows=1)
            -> MemberSelector(Selector=Item2) => #6
            SubscribeSubject RewardSize => #7
            #7, #6 -> WithLatestFrom
            -> Divide => #9
            Bonsai.IO.CsvReader(FileName=PCVars\RewardCalibration.csv, ListSeparator="", ScanPattern="%f,%f", SkipRows=1)
            -> MemberSelector(Selector=Item1) => #11
            #9, #11 -> WithLatestFrom
            -> Add
            -> Multiply(Operand=FloatProperty(Value=10000))
            -> PropertyMapping(DueTime) => #15
            #2, #15 -> Delay(DueTime=PT0.0461128S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
            -> MulticastSubject BehaviorCommandBoard => #18
            -> WorkflowOutput
            #18, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #21
            SubscribeSubject RewardSize => #22
            #21, #22 -> WithLatestFrom
            -> Add
            -> MulticastSubject TotReward
            #0, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject RewTimestamp
    -> Concat => #3
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Control", SuppressRepetitions=true) => #4
    #3, #4 -> TakeUntil
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard
    -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow TurnPositionCalculation
    SubscribeSubject rawData
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        it as Position,
        0.0 as Diference,
        0 as Turns)
    -> Scan => #2
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value.Position)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
        #3, #0 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item2.Value.Position as Position,
            Item1 as Diference,
            Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
        -> WorkflowOutput
    -> MemberSelector(Selector=Position) => #3
    ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #4
    SubscribeSubject RotEncMin => #5
    #3, #5 -> WithLatestFrom
    -> Bonsai.Numerics.Min
    -> MulticastSubject RotEncMin
    SubscribeSubject RotEncMax => #9
    #3, #9 -> WithLatestFrom
    -> Bonsai.Numerics.Max
    -> MulticastSubject RotEncMax
    #2 -> MemberSelector(Selector=Position) => #13
    SubscribeSubject RotEncMin
    -> PropertyMapping(Value) => #15
    #13, #15 -> Subtract(Operand=FloatProperty(Value=0.1)) => #16
    SubscribeSubject RotEncMax
    -> PropertyMapping(Value) => #18
    #16, #18 -> Divide(Operand=FloatProperty(Value=4.7)) => #19
    #2 -> MemberSelector(Selector=Turns)
    -> PropertyMapping(Value) => #21
    #19, #21 -> Add(Operand=FloatProperty(Value=0))
    -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
    -> Bonsai.Dsp.Difference(Order=1) => #24
    #24, #4 -> Multiply(Operand=DoubleProperty(Value=62.832)) => #25
    SubscribeSubject TimeOut
    -> Bonsai.Scripting.ExpressionTransform
      Expression: it ? 1 : 0
    -> Bonsai.Scripting.ExpressionTransform
      Expression: 1-it
    -> PropertyMapping(Value) => #29
    #25, #29 -> Multiply(Operand=DoubleProperty(Value=1)) => #30
    -> BehaviorSubject Encoder
    #30 -> Accumulate
    -> Bonsai.Scripting.ExpressionTransform
      Expression: single(it)
    -> MulticastSubject TotDistance
    #25 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> MulticastSubject RunSpeed

GroupWorkflow MainRoom
    SubscribeSubject "z pos"
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it+150
    -> PropertyMapping(TranslationZ) => #2
    ExternalizedMapping(Value(DisplayName=TunnelWidth))
    -> FloatProperty(Value=15) => #4
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #6
    ExternalizedMapping(Value(DisplayName=TunnelHeight))
    -> FloatProperty(Value=8) => #8
    -> PropertyMapping(ScaleY) => #9
    #8 -> Bonsai.Scripting.ExpressionTransform => #10
      Expression: -it/2
    ExternalizedMapping(Value(DisplayName=MouseHeight))
    -> FloatProperty(Value=3) => #12
    -> PropertyMapping(TranslationY) => #13
    #12 -> PropertyMapping(Value) => #14
    #10, #14 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #16
    #8 -> Bonsai.Scripting.ExpressionTransform => #17
      Expression: it/2
    #12 -> PropertyMapping(Value) => #18
    #18, #17 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #20
    ExternalizedMapping(ScaleX) => #21
    SubscribeSubject TotDistance
    -> Mod(Operand=FloatProperty(Value=200)) => #23
    #6, #9, #13, #21, #23 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(TranslationX) => #3
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(ScaleY) => #6
        ExternalizedMapping(TranslationY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #5, #3, #6, #7, #8 -> GroupWorkflow Left_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-72.35745
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #5, #3, #6, #7, #8 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-272.357452
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #3, #5, #6, #7 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-10372.3574
              ScaleX=20000
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ) => #17
        #5, #3, #6, #17, #8 -> GroupWorkflow Left_BG_-1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=127.642548
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #4 -> Bonsai.Scripting.ExpressionTransform
      Expression: (-it/2)+0.01
    -> PropertyMapping(TranslationXstim) => #26
    SubscribeSubject "z pos" => #27
    SubscribeSubject "z pos" => #28
    #9, #13, #26, #28 -> GroupWorkflow LeftStimuli
        WorkflowInput Source1 => #0
        SubscribeSubject StimStart
        -> PropertyMapping(Value) => #2
        #2, #0 -> Subtract(Operand=FloatProperty(Value=51)) => #3
        SubscribeSubject StimSize => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it/2
        -> PropertyMapping(Value) => #6
        #3, #6 -> Subtract(Operand=FloatProperty(Value=12.5))
        -> PropertyMapping(TranslationZ(Selector=it)) => #8
        #4 -> PropertyMapping(ScaleX) => #9
        ExternalizedMapping(TranslationY, ScaleY, TranslationX(DisplayName=TranslationXstim)) => #10
        #8, #9, #10 -> GroupWorkflow Left_Stim
            Disable SubscribeSubject Draw3DStim => #0
            Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            Disable SubscribeSubject tex_Stim_Left
            -> Disable PropertyMapping(TextureName) => #3
            Disable SubscribeSubject StimContrast
            -> Disable Multiply(Operand=IntProperty(Value=100))
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression: Convert.ToInt64(Math.Round(it))
            -> Disable PropertyMapping(Index) => #7
            #0, #7, #3 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=A, TextureTarget=Texture2D, Index=10) => #8
            Disable SubscribeSubject tex_Stim_Left
            -> Disable PropertyMapping(TextureName) => #10
            #8, #10 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=A, TextureTarget=Texture2D)
            -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=A_000, TextureTarget=Texture2D) => #12
            #12, #1 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.49
              TranslationY=3
              TranslationZ=-63.4744949
              ScaleX=25
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> Disable WorkflowOutput

            Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #15
            Disable ExternalizedMapping(Name)
            -> Disable SubscribeSubject Textures
            -> Disable MemberSelector(Selector=Id)
            -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #19
            #19, #15 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.49
              TranslationY=3
              TranslationZ=8.552452
              ScaleX=25
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> Disable WorkflowOutput

            Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #22
            Disable ExternalizedMapping(Name)
            -> Disable SubscribeSubject Textures
            -> Disable MemberSelector(Selector=Id)
            -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #26
            #26, #22 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.49
              TranslationY=3
              TranslationZ=8.552452
              ScaleX=25
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> Disable WorkflowOutput

            SubscribeSubject Draw3DStim => #29
            Disable ExternalizedMapping(Name) => #30
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #31
            SubscribeSubject Textures => #32
            #29, #32 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #34
            #34, #30 -> Disable SubscribeSubject<Bonsai.Shaders.Texture> Textures
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D) => #36
            #36, #31 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.49
              TranslationY=3
              TranslationZ=8.552452
              ScaleX=25
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput

            SubscribeSubject<Bonsai.Shaders.Texture> Textures
            MemberSelector
    #4 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #31
    #9, #13, #21, #31, #23 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(TranslationX) => #3
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(ScaleY) => #6
        ExternalizedMapping(TranslationY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #5, #3, #6, #7, #8 -> GroupWorkflow Left_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-72.35745
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #5, #3, #6, #7, #8 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-272.357452
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #3, #5, #6, #7 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-10372.3574
              ScaleX=20000
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ) => #17
        #5, #3, #6, #17, #8 -> GroupWorkflow Left_BG_-1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=127.642548
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #4 -> Bonsai.Scripting.ExpressionTransform
      Expression: (it/2)-0.01
    -> PropertyMapping(TranslationXstim) => #34
    #9, #13, #34, #27 -> GroupWorkflow RightStimuli
        WorkflowInput Source1 => #0
        SubscribeSubject StimStart
        -> PropertyMapping(Value) => #2
        #2, #0 -> Subtract(Operand=FloatProperty(Value=51)) => #3
        SubscribeSubject StimSize => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it/2
        -> PropertyMapping(Value) => #6
        #3, #6 -> Subtract(Operand=FloatProperty(Value=12.5))
        -> PropertyMapping(TranslationZ(Selector=it)) => #8
        #4 -> PropertyMapping(ScaleX) => #9
        ExternalizedMapping(TranslationX(DisplayName=TranslationXstim), ScaleY, TranslationY) => #10
        #8, #9, #10 -> GroupWorkflow Right_Stim
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            SubscribeSubject StimContrast
            -> Multiply(Operand=IntProperty(Value=100))
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Convert.ToInt64(Math.Round(it))
            -> PropertyMapping(Index) => #5
            SubscribeSubject tex_Stim_Right
            -> PropertyMapping(TextureName) => #7
            #0, #5, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=A, TextureTarget=Texture2D, Index=30) => #8
            #8, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.49
              TranslationY=3
              TranslationZ=-63.4744949
              ScaleX=25
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #4 -> PropertyMapping(ScaleX) => #36
    #2, #36, #20 -> GroupWorkflow Ceiling
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=7
          TranslationZ=149.974487
          ScaleX=15
          ScaleY=10000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=6, Z=52) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=900, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput

        Disable SubscribeSubject Draw3DStim => #7
        Disable ExternalizedMapping(TextureName) => #8
        #7, #8 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #9
        Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #10
        #9, #10 -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-6
          TranslationZ=312
          ScaleX=20
          ScaleY=1500
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> Disable WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-6, Z=148) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=1500, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput
    #4 -> PropertyMapping(ScaleY) => #38
    #16, #38, #23 -> GroupWorkflow Floor
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(TranslationX) => #3
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(TranslationY) => #6
        ExternalizedMapping(ScaleY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #5, #3, #6, #7, #8 -> GroupWorkflow Floor_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=127.642548
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #5, #3, #6, #7, #8 -> GroupWorkflow Floor_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-72.35745
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #3, #5, #6, #7, #8 -> GroupWorkflow Floor_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-272.357452
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ) => #17
        #17, #5, #3, #6, #7 -> GroupWorkflow Floor_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-10372.3574
              ScaleX=20000
              ScaleY=15
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput

    Disable SubscribeSubject Draw3DStim
    -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=-2
      TranslationY=0
      TranslationZ=0
      ScaleX=10
      ScaleY=10
      ScaleZ=10
      MeshName=Plane
      Ambient(X=0.2, Y=0.2, Z=0.2)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      RotationZ=0
      RotationY=0
      RotationX=0

    Disable SubscribeSubject Draw3DStim
    -> Disable IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=0, LocationY=0, Layer=0, Angle=0, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
    -> Disable IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0)

GroupWorkflow Camera
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
    -> MemberSelector(Selector=Image) => #1
    -> BehaviorSubject CameraImage
    #1 -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Crop(RegionOfInterest(X=722, Y=695, Width=31, Height=35))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #6
    -> GreaterThan(Operand=DoubleProperty(Value=50))
    -> BehaviorSubject LickActivity
    #6 -> Bonsai.Dsp.Buffer(Count=500, Skip=10)
    -> Disable Bonsai.Dsp.Average => #10
    -> GroupWorkflow Mean => #11
        WorkflowInput Source1 => #0
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #2
        #0 -> MemberSelector(Selector=Cols)
        -> PropertyMapping(Value) => #4
        #2, #4 -> Divide(Operand=DoubleProperty(Value=500))
        -> WorkflowOutput
    -> PropertyMapping(Value)
    #11, #10 -> Zip
    -> GroupWorkflow STD
        WorkflowInput Source1
        -> Subtract
        -> Bonsai.Dsp.Pow(Power=2) => #2
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0)
        -> Bonsai.Numerics.Sqrt => #5
        #2 -> MemberSelector(Selector=Cols)
        -> PropertyMapping(Value) => #7
        #5, #7 -> Divide(Operand=DoubleProperty(Value=500))
        -> WorkflowOutput
    -> PropertyMapping(Value)
    #0 -> MemberSelector(Selector=Metadata)
    -> BehaviorSubject CameraMetadata

GroupWorkflow LickResponse
    SubscribeSubject nLicks => #0
    ExternalizedMapping(Value(DisplayName=minNlicks)) => #1
    #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=1))
    -> DistinctUntilChanged
    -> MulticastSubject lickResponse

GroupWorkflow RewAvailability
    SubscribeSubject "z pos" => #0
    SubscribeSubject RewardZoneStart
    -> PropertyMapping(Value) => #2
    #0, #2 -> GreaterThan(Operand=FloatProperty(Value=76)) => #3
    SubscribeSubject RewardZoneEnd
    -> PropertyMapping(Value) => #5
    #0, #5 -> LessThan(Operand=FloatProperty(Value=101)) => #6
    #3, #6 -> Zip
    -> BitwiseAnd
    -> MulticastSubject InRewardZone

GroupWorkflow PassiveRewControl
    SubscribeSubject "z pos" => #0
    SubscribeSubject lickResponse => #1
    SubscribeSubject StimEnd
    -> Disable Add(Operand=FloatProperty(Value=20)) => #3
    #0, #3 -> WithLatestFrom
    -> GreaterThanOrEqual
    -> DistinctUntilChanged
    -> Condition => #7
        WorkflowInput Source1
        -> WorkflowOutput
    #7, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition => #10
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    SubscribeSubject RewardTrial
    -> Equal(Operand=IntProperty(Value=1)) => #12
    #10, #12 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject PassiveRewOn => #16
    #15, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> MulticastSubject GiveReward

GroupWorkflow ActiveRewControl
    SubscribeSubject RewardTrial
    -> Equal(Operand=IntProperty(Value=1)) => #1
    SubscribeSubject lickResponse => #2
    #2, #1 -> WithLatestFrom
    -> LogicalAnd
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> MulticastSubject GiveReward
    -> WorkflowOutput

GroupWorkflow CountLicks
    SubscribeSubject LickActivity => #0
    SubscribeSubject InRewardZone => #1
    #0, #1 -> WithLatestFrom
    -> BitwiseAnd
    -> DistinctUntilChanged
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject nLicks => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Disable Divide(Operand=IntProperty(Value=1))
    -> MulticastSubject nLicks
    -> WorkflowOutput

GroupWorkflow ManualReward
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward
    -> Repeat
    -> WorkflowOutput

GroupWorkflow FileTrigger
    SubscribeSubject HarpTimestamp => #0
    Int64Property(Value=99) => #1
    #1, #0 -> WithLatestFrom
    -> BehaviorSubject TriggerData

    Timer(DueTime=PT1S, Period=PT0S) => #4
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    #4 -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard
    SubscribeSubject HarpTimestamp => #12
    #4, #12 -> WithLatestFrom
    -> MulticastSubject TriggerData

    Timer(DueTime=PT3S, Period=PT2S) => #15
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital3)
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital3)
    -> MulticastSubject BehaviorCommandBoard
    SubscribeSubject HarpTimestamp => #21
    #15, #21 -> WithLatestFrom
    -> MulticastSubject TriggerData

GroupWorkflow TimeOutControl
    SubscribeSubject RewardTrial
    -> Equal(Operand=IntProperty(Value=0)) => #1
    SubscribeSubject lickResponse => #2
    #2, #1 -> WithLatestFrom
    -> LogicalAnd => #4
    SubscribeSubject UseTimeOut => #5
    #4, #5 -> WithLatestFrom
    -> LogicalAnd
    -> DistinctUntilChanged
    -> Condition => #9
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject HarpTimestamp => #10
    #9, #10 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=DoubleProperty(Value=10))
    -> MulticastSubject TimeOutTimestamp

    SubscribeSubject Draw3DStim
    -> Condition
        WorkflowInput Source1

        SubscribeSubject TimeOut
        -> WorkflowOutput
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=red, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=1
      TranslationY=1
      TranslationZ=-1
      ScaleX=1000
      ScaleY=1000
      ScaleZ=1000
      MeshName=Plane
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      RotationZ=0
      RotationY=0
      RotationX=0
    -> WorkflowOutput

    SubscribeSubject HarpTimestamp => #20
    SubscribeSubject TimeOutTimestamp => #21
    #20, #21 -> WithLatestFrom
    -> LessThan
    -> MulticastSubject TimeOut

Disable Bonsai.Vision.LoadImage(FileName=C:\Users\Admin\Downloads\alphademo\5a37f4c7817733.6274047015136165835303.png, Mode=Unchanged)
-> Disable Bonsai.Vision.Flip(Mode=Vertical)
-> Disable Bonsai.Shaders.UpdateTexture(TextureName=Cat, TextureTarget=Texture2D, InternalFormat=Rgba) => #46
ExternalizedMapping(Textures) => #47
#46, #47 -> Disable Bonsai.Shaders.TextureResources(Textures="")
-> Disable Bonsai.Shaders.UpdateTexture(TextureTarget=Texture2D, InternalFormat=Rgba)

Disable Bonsai.IO.GetFiles(Path=Textures\detection_stim\A, SearchPattern=*.png, SearchOption=TopDirectoryOnly)
-> Disable Concat => #51
-> Disable PropertyMapping(FileName)
-> Disable Bonsai.Vision.LoadImage(FileName=Textures\detection_stim\A\A_000.png, Mode=Unchanged)
-> Disable Bonsai.Vision.Flip(Mode=Vertical) => #54
#51 -> Disable Bonsai.IO.GetFileName
-> Disable PropertyMapping(TextureName) => #56
#54, #56 -> Disable Bonsai.Shaders.UpdateTexture(TextureName=A_100.png, TextureTarget=Texture2D, InternalFormat=Rgba)

Disable AsyncSubject<System.String[]>
Disable Bonsai.IO.CsvReader(SkipRows=0)

Disable SubscribeSubject Textures
-> Disable Bonsai.Shaders.UpdateTexture(TextureTarget=Texture2D, InternalFormat=Rgba)

Disable ExternalizedMapping(TextureName) => #62
Bonsai.IO.GetFiles(Path=Textures\detection_stim\A, SearchPattern=*.png, SearchOption=TopDirectoryOnly)
-> Concat
-> PropertyMapping(FileName)
-> Bonsai.Shaders.LoadImage
  Width=nil
  Height=nil
  InternalFormat=Rgba
  WrapS=Repeat
  WrapT=Repeat
  MinFilter=Linear
  MagFilter=Linear
  FileName=Textures\detection_stim\A\A_100.png
  ColorType=Unchanged
  FlipMode=Vertical
-> BehaviorSubject Textures
-> Disable Bonsai.Shaders.TextureResources(Textures="") => #68
#68, #62 -> Disable Bonsai.Shaders.UpdateTexture(TextureName=AG, TextureTarget=Texture2D, InternalFormat=Rgba)

Disable Bonsai.IO.GetFiles(Path=Textures\detection_stim\A, SearchPattern=*.png, SearchOption=TopDirectoryOnly)
-> Disable Delay(DueTime=PT1S)
-> Disable Concat => #72
-> Disable PropertyMapping(FileName)
-> Disable Bonsai.Vision.LoadImage(FileName=Textures\detection_stim\A\A_000.png, Mode=Unchanged)
-> Disable Bonsai.Vision.Flip(Mode=Vertical)
-> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, TextureTarget=Texture2D)
-> Disable Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\BG_gratings.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=A
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\A\jpg\A_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=B
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\B\B_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=C
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\C\C_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=D
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\D\D_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=Ori45
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\Ori45\Ori45_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.ImageSequence
      Name=Ori135
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\Ori135\Ori135_%03d.jpg
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
    TextureConfiguration=Bonsai.Shaders.Texture2D(Name=Cat, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
-> Disable Bonsai.Resources.LoadResources
#72 -> Disable Bonsai.IO.GetFileName
-> Disable PropertyMapping(TextureName)
