WorkflowBuilder(Version=2.6.2)
Bonsai.Shaders.CreateWindow
  Width=4096
  Height=1536
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=First
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratingsMinus45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratingsMinus45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_90degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_90degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_15degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_15degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_30degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_30degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_1_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_1_1.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_1_5
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_1_5.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_5_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_5_1.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_5_5
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_5_5.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_25.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_50.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_75.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #12
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=-53.0000003364945, Z=0), Translation(X=-6.3, Y=1, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1)
#12 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=53.0000003364945, Z=0), Translation(X=6.3, Y=1, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1)
-> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

Bonsai.IO.CsvReader(FileName=PCVars\PCVars_Behavior6.csv, ListSeparator="", ScanPattern="%s,%s,%f", SkipRows=1) => #18
-> MemberSelector(Selector=Item1)
-> PropertyMapping(PortName)
-> GroupWorkflow EssaySetup
    IncludeWorkflow BehaviorCommandBoard(Path=Bonsai.Harp:CommandSubject.bonsai)

    FloatProperty(Value=0)
    -> BehaviorSubject "z pos"

    FloatProperty(Value=0)
    -> BehaviorSubject TotDistance

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> BehaviorSubject RewOn

    ExternalizedMapping(Value(DisplayName=TunnelLength))
    -> FloatProperty(Value=300)
    -> BehaviorSubject TunnelLength

    ExternalizedMapping(Value(DisplayName=tex_BG))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1_50) => #13
    -> BehaviorSubject tex_BG_1
    #13 -> BehaviorSubject tex_BG_3
    #13 -> BehaviorSubject tex_BG_2

    ExternalizedMapping(PortName)
    -> GroupWorkflow HarpDevice
        SubscribeSubject "z pos" => #0
        SubscribeSubject TrialNumber
        -> Add(Operand=IntProperty(Value=1)) => #2
        ExternalizedMapping(Name)
        -> SubscribeSubject BehaviorCommandBoard => #4
        ExternalizedMapping(Value(DisplayName=minValueNormalization)) => #5
        Disable ExternalizedMapping(Value(DisplayName=scaleNormalization)) => #6
        ExternalizedMapping(PortName) => #7
        #4, #7 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM5) => #8
        -> Bonsai.Harp.FilterMessage(Address=nil, MessageType=nil)
        -> Bonsai.Harp.DeviceEvent(Type=MessageTimestamp) => #10
        #10, #2 -> WithLatestFrom => #11
        #11, #0 -> WithLatestFrom => #12
        #8 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #13
        #12, #13 -> WithLatestFrom => #14
        #0 -> Bonsai.Dsp.Difference(Order=1)
        -> Multiply(Operand=DoubleProperty(Value=1000)) => #16
        #14, #16 -> WithLatestFrom
        -> BehaviorSubject HarpData
        #8 -> MemberSelector(Selector=MessageBytes)
        -> BehaviorSubject RawHarpData
        #8 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #21
        #21, #5 -> Disable Subtract(Operand=DoubleProperty(Value=0.1032226)) => #22
        #22, #6 -> Disable Multiply(Operand=DoubleProperty(Value=1.029505415093432))
        -> PublishSubject rawData

    ExternalizedMapping(Value(DisplayName=RewardSpacing))
    -> FloatProperty(Value=50)
    -> BehaviorSubject RewardSpacing

    FloatProperty(Value=50)
    -> BehaviorSubject RewardLocation

    FloatProperty(Value=0)
    -> BehaviorSubject RunSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotReward

    FloatProperty(Value=0.1)
    -> BehaviorSubject RotEncMin

    FloatProperty(Value=4.7)
    -> BehaviorSubject RotEncMax
#18 -> MemberSelector(Selector=Item2)
-> PropertyMapping(OutputDir) => #23
ExternalizedMapping(MouseName) => #24
#23, #24 -> Disable GroupWorkflow Logger
    ExternalizedMapping(Value(DisplayName=OutputDir)) => #0
    -> StringProperty(Value=BonsaiData\) => #1
    ExternalizedMapping(Value(DisplayName=MouseName)) => #2
    -> StringProperty(Value=LPE08344) => #3
    #2 -> StringProperty(Value=LPE08344) => #4
    #2 -> StringProperty(Value=LPE08344) => #5
    #2 -> StringProperty(Value=LPE08344) => #6
    StringProperty(Value=cameracsv.csv) => #7
    #1, #3, #7 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #10
    StringProperty(Value=camera.avi) => #11
    SubscribeSubject CameraImage => #12
    SubscribeSubject CameraMetadata => #13
    #13, #10 -> Bonsai.IO.CsvWriter(FileName=BonsaiData\GF010cameracsv.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=BonsaiData\) => #15
    #15, #4, #11 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #18
    #12, #18 -> Bonsai.Vision.VideoWriter
      FileName=BonsaiData\GF010camera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #0 -> StringProperty(Value=BonsaiData\) => #20
    SubscribeSubject HarpData => #21
    SubscribeSubject RawHarpData => #22
    StringProperty(Value=harp.csv) => #23
    #20, #5, #23 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #26
    #21, #26 -> Bonsai.IO.CsvWriter(FileName=BonsaiData\GF010harp.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=BonsaiData\) => #28
    StringProperty(Value=rawharp.bin) => #29
    #28, #6, #29 -> CombineLatest
    -> Add
    -> PropertyMapping(Path) => #32
    #22, #32 -> Bonsai.Dsp.MatrixWriter(Path=BonsaiData\GF010rawharp.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
#18 -> MemberSelector(Selector=Item3)
-> BehaviorSubject RewardDuration

Timer(DueTime=PT1S, Period=PT0S)
-> SelectMany Initialize
    WorkflowInput Source1
    -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard
-> TakeLast(Count=1) => #30
ExternalizedMapping(FileName(DisplayName=ProtocolName)) => #31
#30, #31 -> SelectMany NewTrial
    ExternalizedMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=Protocols\VR_TextureDiscrimination\MOL_trialseq_AB_2sided.csv, ListSeparator="", ScanPattern="%f,%s,%s,%s,%f,%f", SkipRows=1)
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)

        GroupWorkflow TunnelPos
            SubscribeSubject Encoder
            -> Accumulate
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MulticastSubject "z pos" => #3
            SubscribeSubject TunnelLength
            -> PropertyMapping(Value) => #5
            #3, #5 -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=300))
                -> WorkflowOutput
            -> Unit
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput

        GroupWorkflow RewControl
            SubscribeSubject RewardLocation
            -> PropertyMapping(Value) => #1
            SubscribeSubject "z pos" => #2
            #2, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=50))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> GroupWorkflow Reward
                WorkflowInput Source1 => #0
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard => #2
                SubscribeSubject RewardDuration
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Delay(DueTime=PT0.042S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard => #7
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
                SubscribeSubject RewardLocation => #10
                SubscribeSubject RewardSpacing
                -> PropertyMapping(Value) => #12
                SubscribeSubject TunnelLength
                -> PropertyMapping(Value) => #14
                SubscribeSubject TotReward => #15
                #7, #15 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Add(Operand=FloatProperty(Value=5))
                -> MulticastSubject TotReward
                #0 -> FloatProperty(Value=0) => #20
                #20, #10 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #22
                #12, #22 -> Add(Operand=FloatProperty(Value=50)) => #23
                #23, #14 -> Mod(Operand=FloatProperty(Value=300))
                -> MulticastSubject RewardLocation
            -> Disable WorkflowOutput
    -> Concat => #3
    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Control", SuppressRepetitions=true) => #4
    #3, #4 -> TakeUntil
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1
    -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard

GroupWorkflow Camera
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
    -> MemberSelector(Selector=Image)
    -> BehaviorSubject CameraImage
    #0 -> MemberSelector(Selector="Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter")
    -> BehaviorSubject CameraMetadata

GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Value(DisplayName=TunnelWidth))
    -> FloatProperty(Value=20) => #2
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #4
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #6
    #2 -> PropertyMapping(ScaleX) => #7
    ExternalizedMapping(Value(DisplayName=TunnelHeight))
    -> FloatProperty(Value=12) => #9
    -> PropertyMapping(ScaleY) => #10
    #9 -> Bonsai.Scripting.ExpressionTransform => #11
      Expression: -it/2
    ExternalizedMapping(Value(DisplayName=MouseHeight))
    -> FloatProperty(Value=3) => #13
    -> PropertyMapping(TranslationY) => #14
    #0, #4, #10, #14 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject TunnelLength => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #6
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #8
        #0, #8 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #12
        #4 -> PropertyMapping(ScaleX) => #13
        ExternalizedMapping(ScaleY) => #14
        ExternalizedMapping(TranslationY) => #15
        #10, #3, #1, #13, #14, #15 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-149.94191
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #12 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #18
        #18, #3, #1, #13, #14, #15 -> GroupWorkflow Left_BG_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-449.9419
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #6 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #21
        #21, #1, #3, #13, #14, #15 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-749.9419
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #0, #6, #10, #14 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject TunnelLength => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #6
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #8
        #0, #8 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #12
        #4 -> PropertyMapping(ScaleX) => #13
        ExternalizedMapping(ScaleY) => #14
        ExternalizedMapping(TranslationY) => #15
        #10, #3, #1, #13, #14, #15 -> GroupWorkflow Right_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-149.94191
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #12 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #18
        #18, #3, #1, #13, #14, #15 -> GroupWorkflow Right_BG_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-449.9419
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #6 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #21
        #21, #1, #3, #13, #14, #15 -> GroupWorkflow Right_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-749.9419
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #0 -> Bonsai.Scripting.ExpressionTransform
      Expression: -it+150
    -> PropertyMapping(TranslationZ) => #18
    #13 -> PropertyMapping(Value) => #19
    #11, #19 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #21
    #9 -> Bonsai.Scripting.ExpressionTransform => #22
      Expression: it/2
    #13 -> PropertyMapping(Value) => #23
    #23, #22 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #25
    #18, #7, #25 -> GroupWorkflow Ceiling
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=9
          TranslationZ=149.94191
          ScaleX=20
          ScaleY=10000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> WorkflowOutput
    #0, #21 -> GroupWorkflow Floor
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject TunnelLength => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #6
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #8
        #0, #8 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #12
        #4 -> PropertyMapping(ScaleY) => #13
        #4 -> PropertyMapping(ScaleX) => #14
        ExternalizedMapping(TranslationY) => #15
        #10, #3, #1, #14, #13, #15 -> GroupWorkflow Floor_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=-3
              TranslationZ=-149.94191
              ScaleX=300
              ScaleY=300
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0, #12 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #18
        #18, #3, #1, #14, #13, #15 -> GroupWorkflow Floor_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=-3
              TranslationZ=-449.9419
              ScaleX=300
              ScaleY=300
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0, #6 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #21
        #21, #1, #3, #14, #13, #15 -> GroupWorkflow Floor_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=-3
              TranslationZ=-749.9419
              ScaleX=300
              ScaleY=300
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput

GroupWorkflow ManualReward
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
    -> MulticastSubject BehaviorCommandBoard => #2
    SubscribeSubject RewardDuration
    -> Bonsai.Scripting.ExpressionTransform
      Expression: int32(it)
    -> PropertyMapping(DueTime) => #5
    #2, #5 -> Delay(DueTime=PT0.042S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
    -> MulticastSubject BehaviorCommandBoard => #8
    -> Repeat
    SubscribeSubject TotReward => #10
    #8, #10 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=FloatProperty(Value=5))
    -> MulticastSubject TotReward

ExternalizedMapping(Value(DisplayName=Gain)) => #38
GroupWorkflow TurnPositionCalculation => #39
    SubscribeSubject rawData
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        it as Position,
        0.0 as Diference,
        0 as Turns)
    -> Scan => #2
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value.Position)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
        #3, #0 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item2.Value.Position as Position,
            Item1 as Diference,
            Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
        -> WorkflowOutput
    -> MemberSelector(Selector=Position) => #3
    ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #4
    SubscribeSubject RotEncMin => #5
    #3, #5 -> WithLatestFrom
    -> Bonsai.Numerics.Min
    -> MulticastSubject RotEncMin
    SubscribeSubject RotEncMax => #9
    #3, #9 -> WithLatestFrom
    -> Bonsai.Numerics.Max
    -> MulticastSubject RotEncMax
    #2 -> MemberSelector(Selector=Position) => #13
    SubscribeSubject RotEncMin
    -> PropertyMapping(Value) => #15
    #13, #15 -> Subtract(Operand=FloatProperty(Value=0.0163645521)) => #16
    SubscribeSubject RotEncMax
    -> PropertyMapping(Value) => #18
    #16, #18 -> Divide(Operand=FloatProperty(Value=4.928248)) => #19
    #2 -> MemberSelector(Selector=Turns)
    -> PropertyMapping(Value) => #21
    #19, #21 -> Add(Operand=FloatProperty(Value=59))
    -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
    -> Bonsai.Dsp.Difference(Order=1) => #24
    #24, #4 -> Multiply(Operand=DoubleProperty(Value=62.832)) => #25
    -> WorkflowOutput
    #25 -> Accumulate
    -> Bonsai.Scripting.ExpressionTransform
      Expression: single(it)
    -> MulticastSubject TotDistance
    #25 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> MulticastSubject RunSpeed
#39, #38 -> Multiply(Operand=DoubleProperty(Value=1))
-> BehaviorSubject Encoder

Disable ExternalizedMapping(Value(DisplayName=Gain)) => #42
Disable GroupWorkflow TurnPositionCalculation => #43
    SubscribeSubject rawData
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        it as Position,
        0.0 as Diference,
        0 as Turns)
    -> Scan
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value.Position)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
        #3, #0 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item2.Value.Position as Position,
            Item1 as Diference,
            Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
        -> WorkflowOutput
    -> Bonsai.Scripting.ExpressionTransform
      Expression: ((Position-0.066717020000000)/4.734390980000001)+Turns
    -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
    -> Bonsai.Dsp.Difference(Order=1) => #5
    ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #6
    #5, #6 -> Multiply(Operand=DoubleProperty(Value=62.832)) => #7
    -> WorkflowOutput
    #7 -> Accumulate
    -> Bonsai.Scripting.ExpressionTransform
      Expression: single(it)
    -> MulticastSubject TotDistance
    #7 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> MulticastSubject RunSpeed
#43, #42 -> Disable Multiply(Operand=DoubleProperty(Value=1))
-> Disable BehaviorSubject Encoder
