WorkflowBuilder(Version=2.6.2)
Bonsai.Shaders.CreateWindow
  Width=4096
  Height=1536
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratingsMinus45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratingsMinus45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_90degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_90degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_15degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_15degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_30degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_30degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_1_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_1_1.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_1_5
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_1_5.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_5_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_5_1.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_5_5
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_5_5.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_25.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_50.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_75.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_1_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_1_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_1_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_1_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_1_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_1_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_1_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_1_100.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_5_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_5_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_5_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_5_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_5_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_5_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_5_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_5_100.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_1_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_1_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_1_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_1_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_1_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_1_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_1_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_1_100.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_5_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_5_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_5_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_5_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_5_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_5_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_5_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_5_100.png
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #12
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-10.5, Y=1, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.3333, Height=1)
#12 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=1, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.33333, Y=0, Width=0.33333, Height=1)
#12 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=10.5, Y=1, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666, Y=0, Width=0.3333, Height=1)
-> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

Timer(DueTime=PT0S, Period=PT0S)
-> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
-> MulticastSubject BehaviorCommandBoard
-> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
-> MulticastSubject BehaviorCommandBoard

GroupWorkflow Camera
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
    -> MemberSelector(Selector=Image) => #1
    -> BehaviorSubject CameraImage
    #1 -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Crop(RegionOfInterest(X=616, Y=496, Width=70, Height=69))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=73))
    -> BehaviorSubject LickActivity
    #0 -> MemberSelector(Selector="Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter")
    -> BehaviorSubject CameraMetadata

Bonsai.IO.CsvReader(FileName=PCVars\PCVars_MesoRig.csv, ListSeparator="", ScanPattern="%s,%s,%f", SkipRows=1) => #26
-> MemberSelector(Selector=Item1)
-> PropertyMapping(PortName)
-> GroupWorkflow EssaySetup
    IncludeWorkflow BehaviorCommandBoard(Path=Bonsai.Harp:CommandSubject.bonsai)

    FloatProperty(Value=0)
    -> BehaviorSubject "z pos"

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> BehaviorSubject RewOn

    ExternalizedMapping(Value(DisplayName=StimLocation))
    -> FloatProperty(Value=70)
    -> BehaviorSubject StimLocation

    IntProperty(Value=0)
    -> BehaviorSubject MissTrialsNumber

    IntProperty(Value=0)
    -> BehaviorSubject RewardTrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject HitsTrialsNumber

    ExternalizedMapping(Value(DisplayName=RewDur))
    -> IntProperty(Value=15)
    -> BehaviorSubject RewardDuration

    ExternalizedMapping(Value(DisplayName=TunnelLength))
    -> FloatProperty(Value=300)
    -> BehaviorSubject TunnelLength

    ExternalizedMapping(Value(DisplayName=tex_BG))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1) => #23
    -> BehaviorSubject tex_BG_1
    #23 -> BehaviorSubject tex_BG_3
    #23 -> BehaviorSubject tex_BG_2

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=stim_parametric_1_1)
    -> BehaviorSubject tex_Stim_Left

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=stim_parametric_5_5)
    -> BehaviorSubject tex_Stim_Right

    FloatProperty(Value=200)
    -> BehaviorSubject RewardZoneStart

    FloatProperty(Value=250)
    -> BehaviorSubject RewardZoneEnd

    IntProperty(Value=0)
    -> BehaviorSubject RewardTrial

    StringProperty(Value=A)
    -> BehaviorSubject trialType

    BooleanProperty(Value=false)
    -> BehaviorSubject InRewardZone

    BooleanProperty(Value=false)
    -> BehaviorSubject lickResponse

    StringProperty
    -> BehaviorSubject trialOutcome

    ExternalizedMapping(Value(DisplayName=RewardZoneLength))
    -> FloatProperty(Value=60)
    -> BehaviorSubject RewardZoneLength

    ExternalizedMapping(Value(DisplayName=RewardZoneOffset))
    -> FloatProperty(Value=0)
    -> BehaviorSubject RewardZoneOffset

    ExternalizedMapping(PortName)
    -> GroupWorkflow HarpDevice
        SubscribeSubject "z pos" => #0
        SubscribeSubject TrialNumber
        -> Add(Operand=IntProperty(Value=1)) => #2
        ExternalizedMapping(Name)
        -> SubscribeSubject BehaviorCommandBoard => #4
        ExternalizedMapping(Value(DisplayName=minValueNormalization)) => #5
        Disable ExternalizedMapping(Value(DisplayName=scaleNormalization)) => #6
        ExternalizedMapping(PortName) => #7
        #4, #7 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #8
        -> Bonsai.Harp.FilterMessage(Address=nil, MessageType=nil)
        -> Bonsai.Harp.DeviceEvent(Type=MessageTimestamp) => #10
        #10, #2 -> WithLatestFrom => #11
        #11, #0 -> WithLatestFrom => #12
        #8 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #13
        #12, #13 -> WithLatestFrom => #14
        #0 -> Bonsai.Dsp.Difference(Order=1)
        -> Multiply(Operand=DoubleProperty(Value=1000)) => #16
        #14, #16 -> WithLatestFrom
        -> BehaviorSubject HarpData
        #8 -> MemberSelector(Selector=MessageBytes)
        -> BehaviorSubject RawHarpData
        #8 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #21
        #21, #5 -> Disable Subtract(Operand=DoubleProperty(Value=0.1032226)) => #22
        #22, #6 -> Disable Multiply(Operand=DoubleProperty(Value=1.029505415093432))
        -> PublishSubject rawData

    ExternalizedMapping(Value(DisplayName=Gain)) => #53
    GroupWorkflow TurnPositionCalculation => #54
        SubscribeSubject rawData => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it as Position,
            0.0 as Diference,
            0 as Turns)
        -> Scan
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Position)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
            #3, #0 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item2.Value.Position as Position,
                Item1 as Diference,
                Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform
          Expression: ((Position-0.066717020000000)/4.734390980000001)+Turns
        -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass) => #4
        -> Disable First => #5
        #4, #5 -> Disable WithLatestFrom
        -> Disable Subtract
        -> Bonsai.Dsp.Difference(Order=1) => #8
        ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #9
        #8, #9 -> Multiply(Operand=DoubleProperty(Value=62.832))
        -> WorkflowOutput
        #0 -> Take(Count=2000)
        -> Max
        #0 -> Take(Count=2000)
        -> Min
    #54, #53 -> Multiply(Operand=DoubleProperty(Value=1))
    -> BehaviorSubject Encoder
#26 -> MemberSelector(Selector=Item2)
-> PropertyMapping(OutputDir) => #31
ExternalizedMapping(MouseName) => #32
#31, #32 -> GroupWorkflow Logger
    ExternalizedMapping(Value(DisplayName=OutputDir)) => #0
    -> StringProperty(Value=C:\Data\MOL\PILOTS\20220830_LPE08346_TaskAcquisition\) => #1
    ExternalizedMapping(Value(DisplayName=MouseName)) => #2
    -> StringProperty(Value=LPE08346) => #3
    #2 -> StringProperty(Value=LPE08346) => #4
    #2 -> StringProperty(Value=LPE08346) => #5
    #2 -> StringProperty(Value=LPE08346) => #6
    StringProperty(Value=cameracsv.csv) => #7
    #1, #3, #7 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #10
    StringProperty(Value=camera.avi) => #11
    SubscribeSubject CameraImage => #12
    SubscribeSubject CameraMetadata => #13
    #13, #10 -> Bonsai.IO.CsvWriter(FileName=TLPE08346cameracsv.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=C:\Data\MOL\PILOTS\20220830_LPE08346_TaskAcquisition\) => #15
    #15, #4, #11 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #18
    #12, #18 -> Bonsai.Vision.VideoWriter
      FileName=TLPE08346camera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #0 -> StringProperty(Value=C:\Data\MOL\PILOTS\20220830_LPE08346_TaskAcquisition\) => #20
    SubscribeSubject HarpData => #21
    SubscribeSubject RawHarpData => #22
    StringProperty(Value=harp.csv) => #23
    #20, #5, #23 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #26
    #21, #26 -> Bonsai.IO.CsvWriter(FileName=TLPE08346harp.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=C:\Data\MOL\PILOTS\20220830_LPE08346_TaskAcquisition\) => #28
    StringProperty(Value=rawharp.bin) => #29
    #28, #6, #29 -> CombineLatest
    -> Add
    -> PropertyMapping(Path) => #32
    #22, #32 -> Bonsai.Dsp.MatrixWriter(Path=TLPE08346rawharp.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
#26 -> MemberSelector(Selector=Item3)
-> MulticastSubject RewardDuration

Timer(DueTime=PT1S, Period=PT0S)
-> SelectMany Initialize
    WorkflowInput Source1
    -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S) => #2
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
    -> Disable MulticastSubject BehaviorCommandBoard
    #2 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
-> TakeLast(Count=1) => #38
ExternalizedMapping(FileName(DisplayName=ProtocolName)) => #39
#38, #39 -> SelectMany NewTrial
    ExternalizedMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=Protocols\VR_TextureDiscrimination\MOL_trialseq_AB_2sided.csv, ListSeparator="", ScanPattern="%f,%s,%s,%s,%f,%f", SkipRows=1)
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital3)
        -> MulticastSubject BehaviorCommandBoard
        -> Disable Sink "Trial ON"
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject "TrialChange ON"
            -> WorkflowOutput
        -> Delay(DueTime=PT0.2S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital3)
        -> MulticastSubject BehaviorCommandBoard
        -> Disable Sink "Trial OFF"
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject "TrialChange ON"
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=Item2)
        -> MulticastSubject trialType
        #1 -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialNumber
        #1 -> MemberSelector(Selector=Item3)
        -> MulticastSubject tex_Stim_Left
        #1 -> MemberSelector(Selector=Item4)
        -> MulticastSubject tex_Stim_Right
        #1 -> MemberSelector(Selector=Item5)
        -> MulticastSubject StimLocation => #18
        SubscribeSubject RewardZoneLength
        -> PropertyMapping(Value) => #20
        SubscribeSubject RewardZoneOffset
        -> PropertyMapping(Value) => #22
        #18, #22 -> Add(Operand=FloatProperty(Value=0))
        -> MulticastSubject RewardZoneStart => #24
        #24, #20 -> Add(Operand=FloatProperty(Value=60))
        -> MulticastSubject RewardZoneEnd
        #1 -> MemberSelector(Selector=Item6)
        -> MulticastSubject RewardTrial

        GroupWorkflow Movement
            SubscribeSubject Encoder
            -> Accumulate
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MulticastSubject "z pos" => #3
            SubscribeSubject TunnelLength
            -> PropertyMapping(Value) => #5
            #3, #5 -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=300))
                -> WorkflowOutput
            -> Unit
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput

        GroupWorkflow RewControl
            SubscribeSubject LickActivity => #0
            SubscribeSubject InRewardZone => #1
            #0, #1 -> CombineLatest
            -> BitwiseAnd
            -> DistinctUntilChanged
            -> IntProperty(Value=1)
            -> Accumulate
            -> Divide(Operand=IntProperty(Value=2)) => #7
            ExternalizedMapping(Value(DisplayName=minNlicks)) => #8
            #7, #8 -> GreaterThanOrEqual(Operand=FloatProperty(Value=1))
            -> DistinctUntilChanged
            -> Disable GroupWorkflow Reward
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime(DisplayName=ReportDelay)) => #1
                #0, #1 -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink RewUp => #5
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                SubscribeSubject RewardDuration
                -> PropertyMapping(DueTime) => #7
                #5, #7 -> Delay(DueTime=PT0.15S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink RewDown
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            -> MulticastSubject lickResponse

        GroupWorkflow RewAvailability
            SubscribeSubject "z pos" => #0
            SubscribeSubject RewardZoneStart
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThan(Operand=FloatProperty(Value=245)) => #3
            SubscribeSubject RewardZoneEnd
            -> PropertyMapping(Value) => #5
            #0, #5 -> LessThan(Operand=FloatProperty(Value=305)) => #6
            #3, #6 -> Zip
            -> BitwiseAnd
            -> MulticastSubject InRewardZone
            -> WorkflowOutput

        GroupWorkflow trialOutcome
            SubscribeSubject "z pos" => #0
            SubscribeSubject RewardZoneEnd
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThan(Operand=FloatProperty(Value=305))
            -> DistinctUntilChanged => #4
            -> Condition FA
                SubscribeSubject RewardTrial
                -> Equal(Operand=IntProperty(Value=0)) => #1
                SubscribeSubject lickResponse
                -> Equal(Operand=BooleanProperty(Value=true)) => #3
                #1, #3 -> CombineLatest
                -> LogicalAnd
                -> WorkflowOutput
            -> StringProperty(Value=FA)
            -> MulticastSubject trialOutcome
            #4 -> Condition HIT
                SubscribeSubject RewardTrial
                -> Equal(Operand=IntProperty(Value=1)) => #1
                SubscribeSubject lickResponse
                -> Equal(Operand=BooleanProperty(Value=true)) => #3
                #1, #3 -> CombineLatest
                -> LogicalAnd
                -> WorkflowOutput
            -> StringProperty(Value=HIT)
            -> MulticastSubject trialOutcome
            #4 -> Condition MISS
                SubscribeSubject RewardTrial
                -> Equal(Operand=IntProperty(Value=1)) => #1
                SubscribeSubject lickResponse
                -> Equal(Operand=BooleanProperty(Value=false)) => #3
                #1, #3 -> CombineLatest
                -> LogicalAnd
                -> WorkflowOutput
            -> StringProperty(Value=MISS)
            -> MulticastSubject trialOutcome
            #4 -> Condition CR
                SubscribeSubject RewardTrial
                -> Equal(Operand=IntProperty(Value=0)) => #1
                SubscribeSubject lickResponse
                -> Equal(Operand=BooleanProperty(Value=false)) => #3
                #1, #3 -> CombineLatest
                -> LogicalAnd
                -> WorkflowOutput
            -> StringProperty(Value=CR)
            -> MulticastSubject trialOutcome
    -> Concat
    -> Last
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1
    -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard

GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Value(DisplayName=TunnelWidth))
    -> FloatProperty(Value=20) => #2
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #4
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: (-it/2)+0.01
    -> PropertyMapping(TranslationXStim) => #6
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #8
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: (it/2)-0.01
    -> PropertyMapping(TranslationXStim) => #10
    #2 -> PropertyMapping(ScaleX) => #11
    ExternalizedMapping(Value(DisplayName=TunnelHeight))
    -> FloatProperty(Value=12) => #13
    -> PropertyMapping(ScaleY) => #14
    #13 -> Bonsai.Scripting.ExpressionTransform => #15
      Expression: -it/2
    ExternalizedMapping(Value(DisplayName=MouseHeight))
    -> FloatProperty(Value=3) => #17
    -> PropertyMapping(TranslationY) => #18
    #0, #4, #6, #14, #18 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject tex_Stim_Left
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(TranslationX(DisplayName=TranslationXStim)) => #6
        SubscribeSubject TunnelLength => #7
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #9
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #11
        #0, #11 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #15
        #7 -> PropertyMapping(ScaleX) => #16
        SubscribeSubject StimLocation
        -> PropertyMapping(Value) => #18
        ExternalizedMapping(ScaleY) => #19
        ExternalizedMapping(TranslationY) => #20
        #13, #3, #1, #16, #19, #20 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-149.999466
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #15 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #23
        #23, #3, #1, #16, #19, #20 -> GroupWorkflow Left_BG_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-449.999481
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #9 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #26
        #26, #1, #3, #16, #19, #20 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-749.999451
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #18, #0 -> Subtract(Operand=FloatProperty(Value=245))
        -> PropertyMapping(TranslationZ(Selector=it)) => #29
        #29, #6, #5, #19, #20 -> GroupWorkflow Left_Stim
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim_parametric_1_5, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-9.99
              TranslationY=3
              TranslationZ=-244.999466
              ScaleX=40
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #0, #8, #10, #14, #18 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject tex_Stim_Right
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(TranslationX(DisplayName=TranslationXStim)) => #6
        SubscribeSubject TunnelLength => #7
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #9
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #11
        #0, #11 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #15
        #7 -> PropertyMapping(ScaleX) => #16
        SubscribeSubject StimLocation
        -> PropertyMapping(Value) => #18
        ExternalizedMapping(ScaleY) => #19
        ExternalizedMapping(TranslationY) => #20
        #13, #3, #1, #16, #19, #20 -> GroupWorkflow Right_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-149.999466
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #15 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #23
        #23, #3, #1, #16, #19, #20 -> GroupWorkflow Right_BG_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-449.999481
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #9 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #26
        #26, #1, #3, #16, #19, #20 -> GroupWorkflow Right_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-749.999451
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #18, #0 -> Subtract(Operand=FloatProperty(Value=245))
        -> PropertyMapping(TranslationZ(Selector=it)) => #29
        #29, #6, #5, #19, #20 -> GroupWorkflow Right_Stim
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim_parametric_1_5, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=9.99
              TranslationY=3
              TranslationZ=-244.999466
              ScaleX=40
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #0 -> Bonsai.Scripting.ExpressionTransform
      Expression: -it+150
    -> PropertyMapping(TranslationZ) => #22
    #17 -> PropertyMapping(Value) => #23
    #15, #23 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #25
    #13 -> Bonsai.Scripting.ExpressionTransform => #26
      Expression: it/2
    #17 -> PropertyMapping(Value) => #27
    #27, #26 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #29
    #22, #11, #29 -> GroupWorkflow Ceiling
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=9
          TranslationZ=149.999466
          ScaleX=20
          ScaleY=10000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=6, Z=52) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=900, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput

        Disable SubscribeSubject Draw3DStim => #7
        Disable ExternalizedMapping(TextureName) => #8
        #7, #8 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #9
        Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #10
        #9, #10 -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-6
          TranslationZ=312
          ScaleX=20
          ScaleY=1500
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> Disable WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-6, Z=148) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=1500, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput
    #0, #25 -> GroupWorkflow Floor
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject TunnelLength => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #6
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #8
        #0, #8 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #12
        #4 -> PropertyMapping(ScaleY) => #13
        Disable PropertyMapping(ScaleX) => #14
        ExternalizedMapping(TranslationY) => #15
        #10, #3, #1, #14, #13, #15 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=-3
              TranslationZ=-149.999466
              ScaleX=300
              ScaleY=300
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0, #12 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #18
        #18, #3, #1, #14, #13, #15 -> GroupWorkflow Left_BG_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=-3
              TranslationZ=-449.999481
              ScaleX=300
              ScaleY=300
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0, #6 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #21
        #21, #1, #3, #14, #13, #15 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=-3
              TranslationZ=-749.999451
              ScaleX=300
              ScaleY=300
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput

Disable GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Value(DisplayName=Width))
    -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=ScaleY, Value=25) => #2
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #4
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #6
    #2 -> PropertyMapping(ScaleX) => #7
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: (-it/2)+0.01
    -> PropertyMapping(TranslationXStim) => #9
    #0, #4, #9 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject tex_Stim_Left
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(TranslationX(DisplayName=TranslationXStim)) => #6
        SubscribeSubject TunnelLength => #7
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #9
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #11
        #0, #11 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #15
        #7 -> PropertyMapping(ScaleX) => #16
        #13, #3, #1, #16 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-12.5
              TranslationY=0
              TranslationZ=-149.98172
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #15 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #19
        #19, #3, #1, #16 -> GroupWorkflow Left_BG_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-12.5
              TranslationY=0
              TranslationZ=-449.98172
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #9 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #22
        #22, #1, #3, #16 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-12.5
              TranslationY=0
              TranslationZ=-749.9817
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        SubscribeSubject StimLocation
        -> PropertyMapping(Value) => #25
        #25, #0 -> Subtract(Operand=FloatProperty(Value=122))
        -> PropertyMapping(TranslationZ(Selector=it)) => #27
        #27, #6, #5 -> GroupWorkflow Left_Stim
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim_parametric_1_5, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-12.49
              TranslationY=0
              TranslationZ=-121.981712
              ScaleX=40
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: (it/2)-0.01
    -> PropertyMapping(TranslationXStim) => #12
    #0, #6, #12 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject tex_Stim_Right
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(TranslationX(DisplayName=TranslationXStim)) => #6
        SubscribeSubject TunnelLength => #7
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #9
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #11
        #0, #11 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #15
        #7 -> PropertyMapping(ScaleX) => #16
        #13, #3, #1, #16 -> GroupWorkflow Right_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=12.5
              TranslationY=0
              TranslationZ=-149.98172
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #15 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #19
        #19, #3, #1, #16 -> GroupWorkflow Right_BG_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=12.5
              TranslationY=0
              TranslationZ=-449.98172
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #9 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #22
        #22, #1, #3, #16 -> GroupWorkflow Right_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=12.5
              TranslationY=0
              TranslationZ=-749.9817
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        SubscribeSubject StimLocation
        -> PropertyMapping(Value) => #25
        #25, #0 -> Subtract(Operand=FloatProperty(Value=122))
        -> PropertyMapping(TranslationZ(Selector=it)) => #27
        #27, #6, #5 -> GroupWorkflow Right_Stim
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim_parametric_1_5, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=12.49
              TranslationY=0
              TranslationZ=-121.981712
              ScaleX=40
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #0 -> Bonsai.Scripting.ExpressionTransform
      Expression: (it-200)/25
    -> PropertyMapping(TranslationZ) => #15
    #15, #7 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TextureName) => #1
        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #2
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
        #2, #3 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-6
          TranslationZ=-7.999269
          ScaleX=25
          ScaleY=1000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-6, Z=148) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=1500, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput
    #15 -> Disable GroupWorkflow Ceiling
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=clouds_1, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=80
          TranslationZ=3.2
          ScaleX=1000
          ScaleY=1000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=6, Z=52) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=900, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput

        Disable SubscribeSubject Draw3DStim => #7
        Disable ExternalizedMapping(TextureName) => #8
        #7, #8 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #9
        Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #10
        #9, #10 -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-6
          TranslationZ=312
          ScaleX=20
          ScaleY=1500
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> Disable WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-6, Z=148) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=1500, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
-> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
-> MulticastSubject BehaviorCommandBoard
-> Delay(DueTime=PT0.3S)
-> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
-> MulticastSubject BehaviorCommandBoard
-> Repeat
