WorkflowBuilder(Version=2.6.2)
Bonsai.Shaders.CreateWindow
  Width=4096
  Height=1536
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=First
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratingsMinus45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratingsMinus45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_90degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_90degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_15degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_15degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_30degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_30degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_1_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_1_1.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_1_5
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_1_5.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_5_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_5_1.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_5_5
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_rect\stim_parametric_5_5.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_25.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_50.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1_75.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_1_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_1_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_1_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_1_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_1_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_1_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_1_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_1_100.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_5_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_5_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_5_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_5_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_5_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_5_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_1_5_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_1_5_100.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_1_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_1_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_1_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_1_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_1_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_1_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_1_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_1_100.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_5_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_5_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_5_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_5_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_5_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_5_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_5_5_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace_contr\stim_5_5_100.png
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #11
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-10.5, Y=1, Z=0))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.3333, Height=1)
#11 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=1, Z=-10.5))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.33333, Y=0, Width=0.33333, Height=1)
#11 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=10.5, Y=1, Z=0))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666, Y=0, Width=0.3333, Height=1)
-> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

Bonsai.IO.CsvReader(FileName=PCVars\PCVars_MesoRig.csv, ListSeparator="", ScanPattern="%s,%s,%f", SkipRows=1) => #19
-> MemberSelector(Selector=Item1)
-> PropertyMapping(PortName)
-> GroupWorkflow EssaySetup
    IncludeWorkflow BehaviorCommandBoard(Path=Bonsai.Harp:CommandSubject.bonsai)

    FloatProperty(Value=0)
    -> BehaviorSubject "z pos"

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    ExternalizedMapping(Value(DisplayName=StimLocation))
    -> FloatProperty(Value=70)
    -> BehaviorSubject StimLocation

    ExternalizedMapping(Value(DisplayName=RewDur))
    -> IntProperty(Value=15)
    -> BehaviorSubject RewardDuration

    ExternalizedMapping(Value(DisplayName=TunnelLength))
    -> FloatProperty(Value=300)
    -> BehaviorSubject TunnelLength

    ExternalizedMapping(Value(DisplayName=tex_BG))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1_50) => #15
    -> BehaviorSubject tex_BG_1
    #15 -> BehaviorSubject tex_BG_3
    #15 -> BehaviorSubject tex_BG_2

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=stim_parametric_1_1)
    -> BehaviorSubject tex_Stim_Left

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=stim_parametric_5_5)
    -> BehaviorSubject tex_Stim_Right

    FloatProperty(Value=200)
    -> BehaviorSubject RewardZoneStart

    FloatProperty(Value=250)
    -> BehaviorSubject RewardZoneEnd

    IntProperty(Value=0)
    -> BehaviorSubject RewardTrial

    StringProperty(Value=A)
    -> BehaviorSubject trialType

    BooleanProperty(Value=false)
    -> BehaviorSubject InRewardZone

    BooleanProperty(Value=false)
    -> BehaviorSubject lickResponse

    StringProperty
    -> BehaviorSubject trialOutcome

    ExternalizedMapping(Value(DisplayName=RewardZoneLength))
    -> FloatProperty(Value=80)
    -> BehaviorSubject RewardZoneLength

    ExternalizedMapping(Value(DisplayName=RewardZoneOffset))
    -> FloatProperty(Value=0)
    -> BehaviorSubject RewardZoneOffset

    ExternalizedMapping(PortName)
    -> GroupWorkflow HarpDevice
        SubscribeSubject "z pos" => #0
        SubscribeSubject TrialNumber
        -> Add(Operand=IntProperty(Value=1)) => #2
        ExternalizedMapping(Name)
        -> SubscribeSubject BehaviorCommandBoard => #4
        ExternalizedMapping(Value(DisplayName=minValueNormalization)) => #5
        Disable ExternalizedMapping(Value(DisplayName=scaleNormalization)) => #6
        ExternalizedMapping(PortName) => #7
        #4, #7 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #8
        -> Bonsai.Harp.FilterMessage(Address=nil, MessageType=nil)
        -> Bonsai.Harp.DeviceEvent(Type=MessageTimestamp) => #10
        #10, #2 -> WithLatestFrom => #11
        #11, #0 -> WithLatestFrom => #12
        #8 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #13
        #12, #13 -> WithLatestFrom => #14
        #0 -> Bonsai.Dsp.Difference(Order=1)
        -> Multiply(Operand=DoubleProperty(Value=1000)) => #16
        #14, #16 -> WithLatestFrom
        -> BehaviorSubject HarpData
        #8 -> MemberSelector(Selector=MessageBytes)
        -> BehaviorSubject RawHarpData
        #8 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #21
        #21, #5 -> Disable Subtract(Operand=DoubleProperty(Value=0.1032226)) => #22
        #22, #6 -> Disable Multiply(Operand=DoubleProperty(Value=1.029505415093432))
        -> PublishSubject rawData

    FloatProperty(Value=0)
    -> BehaviorSubject RunSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotReward

    FloatProperty(Value=0)
    -> BehaviorSubject TotDistance

    FloatProperty(Value=0.1)
    -> BehaviorSubject RotEncMin

    FloatProperty(Value=4.7)
    -> BehaviorSubject RotEncMax

    IntProperty(Value=0)
    -> BehaviorSubject nLicks
#19 -> MemberSelector(Selector=Item2)
-> PropertyMapping(OutputDir) => #24
ExternalizedMapping(MouseName) => #25
#24, #25 -> GroupWorkflow Logger
    ExternalizedMapping(Value(DisplayName=OutputDir)) => #0
    -> StringProperty(Value=C:\Data\MOL\) => #1
    ExternalizedMapping(Value(DisplayName=MouseName)) => #2
    -> StringProperty(Value=LPE08344) => #3
    #2 -> StringProperty(Value=LPE08344) => #4
    #2 -> StringProperty(Value=LPE08344) => #5
    #2 -> StringProperty(Value=LPE08344) => #6
    #2 -> StringProperty(Value=LPE08344) => #7
    StringProperty(Value=cameracsv.csv) => #8
    #1, #3, #8 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #11
    StringProperty(Value=camera.avi) => #12
    SubscribeSubject CameraImage => #13
    SubscribeSubject CameraMetadata => #14
    #14, #11 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\LPE08344cameracsv.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=C:\Data\MOL\) => #16
    #16, #4, #12 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #19
    #13, #19 -> Bonsai.Vision.VideoWriter
      FileName=C:\Data\MOL\LPE08344camera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #0 -> StringProperty(Value=C:\Data\MOL\) => #21
    SubscribeSubject HarpData => #22
    SubscribeSubject RawHarpData => #23
    StringProperty(Value=harp.csv) => #24
    #21, #5, #24 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #27
    #22, #27 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\LPE08344harp.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=C:\Data\MOL\) => #29
    StringProperty(Value=rawharp.bin) => #30
    #29, #6, #30 -> CombineLatest
    -> Add
    -> PropertyMapping(Path) => #33
    #23, #33 -> Bonsai.Dsp.MatrixWriter(Path=C:\Data\MOL\LPE08344rawharp.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #0 -> StringProperty(Value=C:\Data\MOL\) => #35
    StringProperty(Value=trialdata.csv) => #36
    #35, #7, #36 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #39
    SubscribeSubject TrialNumber => #40
    SubscribeSubject RewardTrial => #41
    SubscribeSubject StimLocation => #42
    SubscribeSubject RewardZoneStart => #43
    SubscribeSubject RewardZoneEnd => #44
    SubscribeSubject trialOutcome => #45
    #45, #40 -> WithLatestFrom => #46
    SubscribeSubject lickResponse => #47
    SubscribeSubject nLicks => #48
    SubscribeSubject trialType => #49
    #46, #49 -> WithLatestFrom => #50
    #50, #41 -> WithLatestFrom => #51
    #51, #42 -> WithLatestFrom => #52
    #52, #43 -> WithLatestFrom => #53
    #53, #44 -> WithLatestFrom => #54
    #54, #47 -> WithLatestFrom => #55
    #55, #48 -> WithLatestFrom => #56
    SubscribeSubject tex_Stim_Left
    -> PropertyMapping(Value)
    -> StringProperty(Value=stim_parametric_1_1) => #59
    #56, #59 -> WithLatestFrom => #60
    SubscribeSubject tex_Stim_Right
    -> PropertyMapping(Value)
    -> StringProperty(Value=stim_parametric_1_1) => #63
    #60, #63 -> WithLatestFrom => #64
    #39, #64 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\LPE08344trialdata.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
#19 -> MemberSelector(Selector=Item3)
-> MulticastSubject RewardDuration

Timer(DueTime=PT1S, Period=PT0S)
-> SelectMany Initialize
    WorkflowInput Source1 => #0
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    -> WorkflowOutput
    #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard
-> TakeLast(Count=1) => #31
ExternalizedMapping(FileName(DisplayName=ProtocolName)) => #32
#31, #32 -> SelectMany NewTrial
    ExternalizedMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=Protocols\VR_TextureDiscrimination\MOL_trialseq_AB_2sided.csv, ListSeparator="", ScanPattern="%f,%s,%s,%s,%f,%f", SkipRows=1)
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital3)
        -> MulticastSubject BehaviorCommandBoard
        -> Delay(DueTime=PT0.2S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital3)
        -> MulticastSubject BehaviorCommandBoard
        #1 -> MemberSelector(Selector=Item2)
        -> MulticastSubject trialType
        #1 -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialNumber
        #1 -> MemberSelector(Selector=Item3)
        -> MulticastSubject tex_Stim_Left
        #1 -> MemberSelector(Selector=Item4)
        -> MulticastSubject tex_Stim_Right
        #1 -> MemberSelector(Selector=Item5)
        -> MulticastSubject StimLocation => #16
        SubscribeSubject RewardZoneLength
        -> PropertyMapping(Value) => #18
        SubscribeSubject RewardZoneOffset
        -> PropertyMapping(Value) => #20
        #16, #20 -> Add(Operand=FloatProperty(Value=0))
        -> MulticastSubject RewardZoneStart => #22
        #22, #18 -> Add(Operand=FloatProperty(Value=80))
        -> MulticastSubject RewardZoneEnd
        #1 -> MemberSelector(Selector=Item6)
        -> MulticastSubject RewardTrial
        #1 -> Disable BooleanProperty(Value=false)
        -> Disable MulticastSubject lickResponse
        #1 -> IntProperty(Value=0)
        -> MulticastSubject nLicks

        GroupWorkflow TunnelPos
            SubscribeSubject Encoder
            -> Accumulate
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MulticastSubject "z pos" => #3
            SubscribeSubject TunnelLength
            -> PropertyMapping(Value) => #5
            #3, #5 -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=300))
                -> WorkflowOutput
            -> Unit
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    -> Concat => #3
    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Control", SuppressRepetitions=true) => #4
    #3, #4 -> TakeUntil
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(Value(DisplayName=Gain)) => #37
GroupWorkflow TurnPositionCalculation => #38
    SubscribeSubject rawData
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        it as Position,
        0.0 as Diference,
        0 as Turns)
    -> Scan => #2
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value.Position)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
        #3, #0 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item2.Value.Position as Position,
            Item1 as Diference,
            Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
        -> WorkflowOutput
    -> MemberSelector(Selector=Position) => #3
    ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #4
    SubscribeSubject RotEncMin => #5
    #3, #5 -> WithLatestFrom
    -> Bonsai.Numerics.Min
    -> MulticastSubject RotEncMin
    SubscribeSubject RotEncMax => #9
    #3, #9 -> WithLatestFrom
    -> Bonsai.Numerics.Max
    -> MulticastSubject RotEncMax
    #2 -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: ((Position-0.066717020000000)/4.734390980000001)+Turns
    #2 -> MemberSelector(Selector=Position) => #14
    SubscribeSubject RotEncMin
    -> PropertyMapping(Value) => #16
    #14, #16 -> Subtract(Operand=FloatProperty(Value=0.0163645521)) => #17
    SubscribeSubject RotEncMax
    -> PropertyMapping(Value) => #19
    #17, #19 -> Divide(Operand=FloatProperty(Value=4.928248)) => #20
    #2 -> MemberSelector(Selector=Turns)
    -> PropertyMapping(Value) => #22
    #20, #22 -> Add(Operand=FloatProperty(Value=59))
    -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
    -> Bonsai.Dsp.Difference(Order=1) => #25
    #25, #4 -> Multiply(Operand=DoubleProperty(Value=62.832)) => #26
    -> WorkflowOutput
    #26 -> Accumulate
    -> Bonsai.Scripting.ExpressionTransform
      Expression: single(it)
    -> MulticastSubject TotDistance
    #26 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> MulticastSubject RunSpeed
#38, #37 -> Multiply(Operand=DoubleProperty(Value=1))
-> BehaviorSubject Encoder

GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Value(DisplayName=TunnelWidth))
    -> FloatProperty(Value=20) => #2
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #4
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: (-it/2)+0.01
    -> PropertyMapping(TranslationXStim) => #6
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #8
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: (it/2)-0.01
    -> PropertyMapping(TranslationXStim) => #10
    #2 -> PropertyMapping(ScaleX) => #11
    #2 -> PropertyMapping(ScaleY) => #12
    ExternalizedMapping(Value(DisplayName=TunnelHeight))
    -> FloatProperty(Value=12) => #14
    -> PropertyMapping(ScaleY) => #15
    #14 -> Bonsai.Scripting.ExpressionTransform => #16
      Expression: -it/2
    ExternalizedMapping(Value(DisplayName=MouseHeight))
    -> FloatProperty(Value=3) => #18
    -> PropertyMapping(TranslationY) => #19
    #0, #4, #6, #15, #19 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject tex_Stim_Left
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(TranslationX(DisplayName=TranslationXStim)) => #6
        SubscribeSubject TunnelLength => #7
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> Disable PropertyMapping(Value) => #9
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #11
        #0, #11 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #15
        #7 -> PropertyMapping(ScaleX) => #16
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)-it
        -> PropertyMapping(Value) => #18
        SubscribeSubject StimLocation
        -> PropertyMapping(Value) => #20
        ExternalizedMapping(ScaleY) => #21
        ExternalizedMapping(TranslationY) => #22
        #13, #3, #1, #16, #21, #22 -> GroupWorkflow Left_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-73.00484
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #15 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #25
        #25, #3, #1, #16, #21, #22 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-373.004822
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #9 -> Subtract(Operand=FloatProperty(Value=5600))
        -> PropertyMapping(TranslationZ(Selector=it)) => #28
        #28, #1, #3, #21, #22 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-5523.005
              ScaleX=10000
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #20, #0 -> Subtract(Operand=FloatProperty(Value=188))
        -> Subtract(Operand=FloatProperty(Value=40))
        -> PropertyMapping(TranslationZ(Selector=it)) => #32
        #32, #6, #5, #21, #22 -> GroupWorkflow Left_Stim
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim_parametric_1_1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-9.99
              TranslationY=3
              TranslationZ=-151.004837
              ScaleX=80
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #18 -> Subtract(Operand=FloatProperty(Value=-150))
        -> PropertyMapping(TranslationZ) => #35
        #3, #1, #16, #21, #35 -> GroupWorkflow Left_BG_-1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=226.995163
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #0, #8, #10, #15, #19 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject tex_Stim_Right
        -> PropertyMapping(TextureName(Selector=it)) => #5
        ExternalizedMapping(TranslationX(DisplayName=TranslationXStim)) => #6
        SubscribeSubject TunnelLength => #7
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> Disable PropertyMapping(Value) => #9
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #11
        #0, #11 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #15
        #7 -> PropertyMapping(ScaleX) => #16
        #7 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)-it
        -> PropertyMapping(Value) => #18
        SubscribeSubject StimLocation
        -> PropertyMapping(Value) => #20
        ExternalizedMapping(ScaleY) => #21
        ExternalizedMapping(TranslationY) => #22
        #13, #3, #1, #16, #21, #22 -> GroupWorkflow Right_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-73.00484
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #15 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #25
        #25, #3, #1, #16, #21, #22 -> GroupWorkflow Right_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-373.004822
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #9 -> Subtract(Operand=FloatProperty(Value=5600))
        -> PropertyMapping(TranslationZ(Selector=it)) => #28
        #28, #1, #3, #21, #22 -> GroupWorkflow Right_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-5523.005
              ScaleX=10000
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #20, #0 -> Subtract(Operand=FloatProperty(Value=188))
        -> Subtract(Operand=FloatProperty(Value=40))
        -> PropertyMapping(TranslationZ(Selector=it)) => #32
        #32, #6, #5, #21, #22 -> GroupWorkflow Right_Stim
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim_parametric_1_1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=9.99
              TranslationY=3
              TranslationZ=-151.004837
              ScaleX=80
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0, #18 -> Subtract(Operand=FloatProperty(Value=-150))
        -> PropertyMapping(TranslationZ) => #35
        #35, #3, #16, #21, #22 -> GroupWorkflow Right_BG_-1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=226.995163
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #0 -> Bonsai.Scripting.ExpressionTransform
      Expression: -it+150
    -> PropertyMapping(TranslationZ) => #23
    #18 -> PropertyMapping(Value) => #24
    #16, #24 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #26
    #14 -> Bonsai.Scripting.ExpressionTransform => #27
      Expression: it/2
    #18 -> PropertyMapping(Value) => #28
    #28, #27 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #30
    #23, #11, #30 -> GroupWorkflow Ceiling
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=9
          TranslationZ=73.00484
          ScaleX=20
          ScaleY=10000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=6, Z=52) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=900, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput

        Disable SubscribeSubject Draw3DStim => #7
        Disable ExternalizedMapping(TextureName) => #8
        #7, #8 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #9
        Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #10
        #9, #10 -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-6
          TranslationZ=312
          ScaleX=20
          ScaleY=1500
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> Disable WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-6, Z=148) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=1500, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput
    #0, #26, #12 -> GroupWorkflow Floor
        WorkflowInput Source1 => #0
        ExternalizedMapping(TranslationX) => #1
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #3
        SubscribeSubject TunnelLength => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+2*it
        -> PropertyMapping(Value) => #6
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)
        -> PropertyMapping(Value) => #8
        #0, #8 -> Subtract(Operand=FloatProperty(Value=150))
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #4 -> Bonsai.Scripting.ExpressionTransform
          Expression: (it/2)+it
        -> PropertyMapping(Value) => #12
        #4 -> PropertyMapping(ScaleX) => #13
        ExternalizedMapping(TranslationY) => #14
        ExternalizedMapping(ScaleY) => #15
        #10, #3, #1, #14, #13, #15 -> GroupWorkflow Floor_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-3
              TranslationZ=-73.00484
              ScaleX=300
              ScaleY=20
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0, #12 -> Subtract(Operand=FloatProperty(Value=450))
        -> PropertyMapping(TranslationZ(Selector=it)) => #18
        #18, #3, #1, #14, #13, #15 -> GroupWorkflow Floor_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-3
              TranslationZ=-373.004822
              ScaleX=300
              ScaleY=20
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput
        #0, #6 -> Subtract(Operand=FloatProperty(Value=750))
        -> PropertyMapping(TranslationZ(Selector=it)) => #21
        #21, #1, #3, #14, #13, #15 -> GroupWorkflow Floor_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1_50, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-3
              TranslationZ=-673.0048
              ScaleX=300
              ScaleY=20
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=90
            -> WorkflowOutput

GroupWorkflow Camera
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
    -> MemberSelector(Selector=Image) => #1
    -> BehaviorSubject CameraImage
    #1 -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Crop(RegionOfInterest(X=740, Y=468, Width=66, Height=45))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #6
    -> Bonsai.Dsp.Buffer(Count=200, Skip=10) => #7
    -> GroupWorkflow Mean => #8
        WorkflowInput Source1 => #0
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #2
        #0 -> MemberSelector(Selector=Cols)
        -> PropertyMapping(Value) => #4
        #2, #4 -> Divide(Operand=DoubleProperty(Value=200))
        -> WorkflowOutput
    -> PropertyMapping(Value) => #9
    #6, #9 -> Subtract(Operand=DoubleProperty(Value=6.2263215488215495)) => #10
    #8, #7 -> Zip
    -> GroupWorkflow STD
        WorkflowInput Source1
        -> Subtract
        -> Bonsai.Dsp.Pow(Power=2) => #2
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0)
        -> Bonsai.Numerics.Sqrt => #5
        #2 -> MemberSelector(Selector=Cols)
        -> PropertyMapping(Value) => #7
        #5, #7 -> Divide(Operand=DoubleProperty(Value=200))
        -> WorkflowOutput
    -> PropertyMapping(Value) => #13
    #10, #13 -> Disable Divide(Operand=DoubleProperty(Value=0.0010045891647038575))
    -> GreaterThan(Operand=DoubleProperty(Value=3))
    -> BehaviorSubject LickActivity
    #0 -> MemberSelector(Selector="Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter")
    -> BehaviorSubject CameraMetadata

GroupWorkflow ManualReward
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
    -> MulticastSubject BehaviorCommandBoard => #2
    Disable SubscribeSubject RewardDuration
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: int32(it)
    -> Disable PropertyMapping(DueTime) => #5
    #2, #5 -> Delay(DueTime=PT0.054S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
    -> MulticastSubject BehaviorCommandBoard => #8
    SubscribeSubject TotReward => #9
    #8, #9 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=FloatProperty(Value=5))
    -> MulticastSubject TotReward
    -> Repeat

GroupWorkflow LickResponse
    SubscribeSubject nLicks => #0
    ExternalizedMapping(Value(DisplayName=minNlicks)) => #1
    #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=1))
    -> DistinctUntilChanged
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> MulticastSubject lickResponse

GroupWorkflow RewAvailability
    SubscribeSubject "z pos" => #0
    SubscribeSubject RewardZoneStart
    -> PropertyMapping(Value) => #2
    #0, #2 -> GreaterThan(Operand=FloatProperty(Value=188)) => #3
    SubscribeSubject RewardZoneEnd
    -> PropertyMapping(Value) => #5
    #0, #5 -> LessThan(Operand=FloatProperty(Value=268)) => #6
    #3, #6 -> Zip
    -> BitwiseAnd
    -> MulticastSubject InRewardZone

GroupWorkflow PassiveRewControl
    SubscribeSubject "z pos" => #0
    SubscribeSubject lickResponse => #1
    SubscribeSubject StimLocation
    -> Add(Operand=FloatProperty(Value=20)) => #3
    #0, #3 -> WithLatestFrom
    -> GreaterThanOrEqual
    -> DistinctUntilChanged
    -> Condition => #7
        WorkflowInput Source1
        -> WorkflowOutput
    #7, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition => #10
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    SubscribeSubject RewardTrial
    -> Equal(Operand=IntProperty(Value=1)) => #12
    #10, #12 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> GroupWorkflow Reward
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime(DisplayName=ReportDelay)) => #1
        #0, #1 -> Delay(DueTime=PT0.5S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
        -> MulticastSubject BehaviorCommandBoard => #4
        Disable SubscribeSubject RewardDuration
        -> Disable PropertyMapping(DueTime) => #6
        #4, #6 -> Delay(DueTime=PT0.054S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
        -> MulticastSubject BehaviorCommandBoard => #9
        -> WorkflowOutput
        SubscribeSubject TotReward => #11
        #9, #11 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=FloatProperty(Value=5))
        -> MulticastSubject TotReward

GroupWorkflow trialOutcome
    SubscribeSubject "z pos" => #0
    SubscribeSubject RewardZoneEnd => #1
    #0, #1 -> WithLatestFrom
    -> GreaterThan
    -> DistinctUntilChanged
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    -> Condition FA
        SubscribeSubject RewardTrial
        -> Equal(Operand=IntProperty(Value=0)) => #1
        SubscribeSubject lickResponse
        -> Equal(Operand=BooleanProperty(Value=true)) => #3
        #1, #3 -> WithLatestFrom
        -> LogicalAnd
        -> WorkflowOutput
    -> StringProperty(Value=FA)
    -> MulticastSubject trialOutcome
    #5 -> Condition HIT
        SubscribeSubject RewardTrial
        -> Equal(Operand=IntProperty(Value=1)) => #1
        SubscribeSubject lickResponse
        -> Equal(Operand=BooleanProperty(Value=true)) => #3
        #1, #3 -> WithLatestFrom
        -> LogicalAnd
        -> WorkflowOutput
    -> StringProperty(Value=HIT)
    -> MulticastSubject trialOutcome
    #5 -> Condition MISS
        SubscribeSubject RewardTrial
        -> Equal(Operand=IntProperty(Value=1)) => #1
        SubscribeSubject lickResponse
        -> Equal(Operand=BooleanProperty(Value=false)) => #3
        #1, #3 -> WithLatestFrom
        -> LogicalAnd
        -> WorkflowOutput
    -> StringProperty(Value=MISS)
    -> MulticastSubject trialOutcome
    #5 -> Condition CR
        SubscribeSubject RewardTrial
        -> Equal(Operand=IntProperty(Value=0)) => #1
        SubscribeSubject lickResponse
        -> Equal(Operand=BooleanProperty(Value=false)) => #3
        #1, #3 -> WithLatestFrom
        -> LogicalAnd
        -> WorkflowOutput
    -> StringProperty(Value=CR)
    -> MulticastSubject trialOutcome

GroupWorkflow ActiveRewControl
    SubscribeSubject RewardTrial
    -> Equal(Operand=IntProperty(Value=1)) => #1
    SubscribeSubject lickResponse => #2
    #2, #1 -> WithLatestFrom
    -> LogicalAnd
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> GroupWorkflow Reward
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime(DisplayName=ReportDelay)) => #1
        #0, #1 -> Delay(DueTime=PT0.5S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
        -> MulticastSubject BehaviorCommandBoard => #4
        Disable SubscribeSubject RewardDuration
        -> Disable PropertyMapping(DueTime) => #6
        #4, #6 -> Delay(DueTime=PT0.054S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
        -> MulticastSubject BehaviorCommandBoard => #9
        -> Disable Sink RewDown
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject RewGiven
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
        SubscribeSubject TotReward => #13
        #9, #13 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=FloatProperty(Value=5))
        -> MulticastSubject TotReward
    -> WorkflowOutput

GroupWorkflow CountLicks
    SubscribeSubject LickActivity => #0
    SubscribeSubject InRewardZone => #1
    #0, #1 -> WithLatestFrom
    -> BitwiseAnd
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> Divide(Operand=IntProperty(Value=1))
    -> MulticastSubject nLicks
    -> WorkflowOutput

Disable GroupWorkflow ManualRewardOld
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.3S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
    -> MulticastSubject BehaviorCommandBoard
    -> Repeat
    -> WorkflowOutput
