WorkflowBuilder(Version=2.6.2)
Bonsai.Shaders.CreateWindow
  Width=1920
  Height=1080
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=First
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratingsMinus45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratingsMinus45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_90degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_90degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_15degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_15degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_30degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_30degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=clouds_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\sky_clouds_1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_1_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace\stim_parametric_1_1.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_1_5
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace\stim_parametric_1_5.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_5_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace\stim_parametric_5_1.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim_parametric_5_5
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stimspace\stim_parametric_5_5.png
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #12
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=-53.0000003364945, Z=0), Translation(X=-6.3, Y=1, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1)
#12 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=53.0000003364945, Z=0), Translation(X=6.3, Y=1, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1)
-> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

Disable Bonsai.IO.CsvReader(FileName=Protocols\Trainings\training_1_100cm.csv, ScanPattern="%l,%s,%s,%l,%l,%l,%l", SkipRows=1)
-> Disable CreateObservable
    WorkflowInput Source1 => #0
    -> Take(Count=1) => #1
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject TempTex0
    -> MulticastSubject tex0
    #1 -> MemberSelector(Selector=Item3)
    -> MulticastSubject TempTex1
    -> MulticastSubject tex1
    #1 -> MemberSelector(Selector=Item5)
    -> MulticastSubject RewardLocation
    #1 -> IntProperty(Value=64)
    -> MulticastSubject TrialNumber
    #0 -> SelectMany StimRewControl
        SubscribeSubject RewardLocation => #0
        -> DistinctUntilChanged
        -> Add(Operand=DoubleProperty(Value=400))
        -> PropertyMapping(Value) => #3
        #0 -> PropertyMapping(Value) => #4
        SubscribeSubject "z pos" => #5
        #5, #4 -> SkipWhile => #6
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=60))
            -> WorkflowOutput
        #6, #3 -> TakeWhile => #7
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> LessThan(Operand=FloatProperty(Value=460))
            -> WorkflowOutput
        -> Take(Count=1) => #8
        #7, #8 -> WithLatestFrom
        -> Subtract
        -> Multiply(Operand=FloatProperty(Value=1))
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Double(it)
        -> Bonsai.Numerics.Truncate
        -> DistinctUntilChanged => #14
        ExternalizedMapping(Value(DisplayName=period)) => #15
        #14, #15 -> Mod(Operand=FloatProperty(Value=100)) => #16
        ExternalizedMapping(Value(DisplayName=phase)) => #17
        #16, #17 -> Equal(Operand=FloatProperty(Value=0))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> CreateObservable
            SubscribeSubject RewardDuration
            -> PropertyMapping(DueTime) => #1
            WorkflowInput Source1
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
            -> MulticastSubject BehaviorCommandBoard
            -> Sink RewUp => #5
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject RewOn
                -> WorkflowOutput
            #5, #1 -> Delay(DueTime=PT0.0000015S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
            -> MulticastSubject BehaviorCommandBoard
            -> Sink RewDown
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject RewOn
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Merge
        -> TakeLast(Count=1)

    GroupWorkflow Movement
        SubscribeSubject Encoder
        -> Accumulate
        -> Add(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject "z pos" => #4
        SubscribeSubject TunnelLength
        -> PropertyMapping(Value) => #6
        #4, #6 -> TakeWhile
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> LessThan(Operand=FloatProperty(Value=300))
            -> WorkflowOutput
        -> Unit
        -> WorkflowOutput
    -> Last
    -> WorkflowOutput
-> Disable Concat
-> Disable Last
-> Disable TakeLast(Count=1)

Disable Timer(DueTime=PT0S, Period=PT0S)
-> Disable Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
-> Disable MulticastSubject BehaviorCommandBoard

ExternalizedMapping(MouseName)
-> Disable GroupWorkflow Logger
    ExternalizedMapping(Value(DisplayName=OutputDir)) => #0
    -> StringProperty(Value=BonsaiData\) => #1
    ExternalizedMapping(Value(DisplayName=MouseName)) => #2
    -> StringProperty(Value=GF007) => #3
    #2 -> StringProperty(Value=GF007) => #4
    #2 -> StringProperty(Value=GF007) => #5
    #2 -> StringProperty(Value=GF007) => #6
    StringProperty(Value=cameracsv.csv) => #7
    #1, #3, #7 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #10
    StringProperty(Value=camera.avi) => #11
    SubscribeSubject CameraImage => #12
    SubscribeSubject CameraMetadata => #13
    #13, #10 -> Bonsai.IO.CsvWriter(FileName=BonsaiData\GF010cameracsv.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=BonsaiData\) => #15
    #15, #4, #11 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #18
    #12, #18 -> Bonsai.Vision.VideoWriter
      FileName=BonsaiData\GF010camera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #0 -> StringProperty(Value=BonsaiData\) => #20
    SubscribeSubject HarpData => #21
    SubscribeSubject RawHarpData => #22
    StringProperty(Value=harp.csv) => #23
    #20, #5, #23 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #26
    #21, #26 -> Bonsai.IO.CsvWriter(FileName=BonsaiData\GF010harp.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=BonsaiData\) => #28
    StringProperty(Value=rawharp.bin) => #29
    #28, #6, #29 -> CombineLatest
    -> Add
    -> PropertyMapping(Path) => #32
    #22, #32 -> Bonsai.Dsp.MatrixWriter(Path=BonsaiData\GF010rawharp.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

GroupWorkflow Movement
    SubscribeSubject Encoder
    -> Accumulate
    -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: single(it)
    SubscribeSubject TunnelLength
    -> PropertyMapping(Value) => #4
    #2, #4 -> Mod(Operand=FloatProperty(Value=500))
    -> MulticastSubject "z pos"
    -> WorkflowOutput
    #2, #4 -> Divide(Operand=FloatProperty(Value=500)) => #8
    -> MulticastSubject TrialNumber
    #8 -> Disable DistinctUntilChanged
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital3)
    -> Disable MulticastSubject BehaviorCommandBoard
    -> Disable Sink "Trial ON"
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> MulticastSubject "TrialChange ON"
        -> WorkflowOutput
    -> Disable Delay(DueTime=PT0.2S)
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital3)
    -> Disable MulticastSubject BehaviorCommandBoard
    -> Disable Sink "Trial OFF"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject "TrialChange ON"
        -> WorkflowOutput

    Disable SubscribeSubject Encoder
    -> Disable Accumulate
    -> Disable Add(Operand=DoubleProperty(Value=0))
    -> Disable Bonsai.Scripting.ExpressionTransform => #21
      Expression: single(it)
    Disable SubscribeSubject TunnelLength
    -> Disable PropertyMapping(Value) => #23
    #21, #23 -> Disable Mod(Operand=FloatProperty(Value=300))
    -> Disable MulticastSubject "z pos"
    -> Disable WorkflowOutput

    SubscribeSubject "z pos"
    -> Mod(Operand=FloatProperty(Value=23))
    -> GreaterThan(Operand=FloatProperty(Value=20))
    -> MulticastSubject LickActivity

GroupWorkflow RewControl
    Disable SubscribeSubject RewardLocation => #0
    -> Disable DistinctUntilChanged
    -> Disable Add(Operand=DoubleProperty(Value=400))
    -> Disable PropertyMapping(Value) => #3
    #0 -> Disable PropertyMapping(Value) => #4
    Disable SubscribeSubject "z pos" => #5
    #5, #4 -> Disable SkipWhile => #6
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=60))
        -> WorkflowOutput
    #6, #3 -> Disable TakeWhile => #7
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> LessThan(Operand=FloatProperty(Value=460))
        -> WorkflowOutput
    -> Disable Take(Count=1) => #8
    #7, #8 -> Disable WithLatestFrom
    -> Disable Subtract
    -> Disable Multiply(Operand=FloatProperty(Value=1))
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: Double(it)
    -> Disable Bonsai.Numerics.Truncate
    -> Disable DistinctUntilChanged => #14
    Disable ExternalizedMapping(Value(DisplayName=period)) => #15
    #14, #15 -> Disable Mod(Operand=FloatProperty(Value=100)) => #16
    Disable ExternalizedMapping(Value(DisplayName=phase)) => #17
    #16, #17 -> Disable Equal(Operand=FloatProperty(Value=0))
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable CreateObservable
        SubscribeSubject RewardDuration
        -> PropertyMapping(DueTime) => #1
        WorkflowInput Source1
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
        -> MulticastSubject BehaviorCommandBoard
        -> Sink RewUp => #5
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject RewOn
            -> WorkflowOutput
        #5, #1 -> Delay(DueTime=PT0.0000015S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
        -> MulticastSubject BehaviorCommandBoard
        -> Sink RewDown
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject RewOn
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Disable Merge
    -> Disable TakeLast(Count=1)
    -> Disable WorkflowOutput

    SubscribeSubject "z pos" => #24
    SubscribeSubject RewardZoneStart
    -> PropertyMapping(Value) => #26
    #24, #26 -> GreaterThan(Operand=FloatProperty(Value=200)) => #27
    SubscribeSubject RewardZoneEnd
    -> PropertyMapping(Value) => #29
    #24, #29 -> LessThan(Operand=FloatProperty(Value=250)) => #30
    #27, #30 -> Merge => #31
    -> Disable TakeLast(Count=2)
    -> Disable Accumulate
    #31 -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: single(it)
    -> Disable Multiply(Operand=BooleanProperty(Value=false))
    #31 -> LogicalAnd(Operand=BooleanProperty(Value=false))
    -> Disable MulticastSubject RewardAvailable
    #27, #30 -> CombineLatest
    -> Disable LogicalAnd(Operand=BooleanProperty(Value=false))

    Disable SubscribeSubject "z pos" => #40
    Disable SubscribeSubject LickActivity => #41
    Disable SubscribeSubject RewardZoneStart
    -> Disable PropertyMapping(Value) => #43
    #40, #43 -> Disable SkipWhile => #44
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=200))
        -> WorkflowOutput
    Disable SubscribeSubject RewardZoneEnd
    -> Disable PropertyMapping(Value) => #46
    #44, #46 -> Disable TakeWhile => #47
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> LessThan(Operand=FloatProperty(Value=250))
        -> WorkflowOutput
    #47, #41 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2)
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable FirstOrDefault
    -> Disable Take(Count=1) => #52
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable GroupWorkflow Reward
        ExternalizedMapping(DueTime(DisplayName=RewardDuration)) => #0
        WorkflowInput Source1 => #1
        ExternalizedMapping(DueTime(DisplayName=ReportDelay)) => #2
        #1, #2 -> Delay(DueTime=PT0.5S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
        -> MulticastSubject BehaviorCommandBoard
        -> Sink RewUp => #6
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject RewOn
            -> WorkflowOutput
        #6, #0 -> Delay(DueTime=PT0.15S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
        -> MulticastSubject BehaviorCommandBoard
        -> Sink RewDown
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject RewOn
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Disable Take(Count=1) => #55
    #52 -> Disable Condition => #56
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    Disable SubscribeSubject MissTrialsNumber
    -> Disable PropertyMapping(Value) => #58
    #56, #58 -> Disable IntProperty(Value=0)
    -> Disable Add(Operand=IntProperty(Value=1))
    -> Disable MulticastSubject MissTrialsNumber
    -> Disable BooleanProperty(Value=true)
    -> Disable GroupWorkflow NoReward => #63
        WorkflowInput Source1
        -> WorkflowOutput
    #55, #63 -> Disable Merge
    -> Disable Take(Count=1)
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Port0)
    -> Disable MulticastSubject BehaviorCommandBoard
    -> Disable Sink RewDown
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject RewOn
        -> WorkflowOutput

Disable GroupWorkflow Camera
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
    -> MemberSelector(Selector=Image) => #1
    -> BehaviorSubject CameraImage
    #1 -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Crop(RegionOfInterest(X=494, Y=336, Width=70, Height=69))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=73))
    -> BehaviorSubject LickActivity
    #0 -> MemberSelector(Selector="Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter")
    -> BehaviorSubject CameraMetadata

GroupWorkflow EssaySetup
    IncludeWorkflow BehaviorCommandBoard(Path=Bonsai.Harp:CommandSubject.bonsai)

    FloatProperty(Value=0)
    -> BehaviorSubject "z pos"

    IncludeWorkflow(Path=Extensions\MouseEncoder.bonsai, Gain=4)
    -> PublishSubject Encoder

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> BehaviorSubject RewOn

    ExternalizedMapping(Value(DisplayName=StimLocation0))
    -> FloatProperty(Value=70)
    -> BehaviorSubject StimLocation0

    ExternalizedMapping(Value(DisplayName=StimLocation1))
    -> FloatProperty(Value=210)
    -> BehaviorSubject StimLocation1

    IntProperty(Value=0)
    -> BehaviorSubject MissTrialsNumber

    IntProperty(Value=0)
    -> BehaviorSubject RewardTrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject HitsTrialsNumber

    ExternalizedMapping(Value(DisplayName=RewDur))
    -> IntProperty(Value=15)
    -> BehaviorSubject RewardDuration

    ExternalizedMapping(Value(DisplayName=TunnelLength))
    -> FloatProperty(Value=300)
    -> BehaviorSubject TunnelLength

    ExternalizedMapping(Value(DisplayName=tex_BG))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn2) => #28
    -> BehaviorSubject tex_BG_0
    #28 -> BehaviorSubject tex_BG_1

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=stim_parametric_1_1) => #31
    -> BehaviorSubject tex_Stim_Left_0
    #31 -> BehaviorSubject tex_Stim_Left_1

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=stim_parametric_1_5) => #34
    -> BehaviorSubject tex_Stim_Right_0
    #34 -> BehaviorSubject tex_Stim_Right_1

    ExternalizedMapping(Value(DisplayName=RewardZoneStart))
    -> FloatProperty(Value=200)
    -> BehaviorSubject RewardZoneStart

    ExternalizedMapping(Value(DisplayName=RewardZoneEnd))
    -> FloatProperty(Value=250)
    -> BehaviorSubject RewardZoneEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject RewardAvailable

GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Value(DisplayName=Width))
    -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=ScaleY, Value=25) => #2
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #4
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #6
    #2 -> PropertyMapping(ScaleX) => #7
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: (-it/2)+0.01
    -> PropertyMapping(TranslationXStim) => #9
    #0, #4, #9 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-100
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        SubscribeSubject tex_BG_0
        -> PropertyMapping(TextureName(Selector=it)) => #7
        #2, #3, #4, #5, #7 -> GroupWorkflow Left_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn2, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-12.5
              TranslationY=0
              TranslationZ=-68
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-400
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #3, #4, #7 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn2, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-12.5
              TranslationY=0
              TranslationZ=-368
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-220
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        SubscribeSubject tex_Stim_Left_0
        -> PropertyMapping(TextureName(Selector=it)) => #15
        ExternalizedMapping(TranslationX(DisplayName=TranslationXStim)) => #16
        #3, #4, #13, #16, #15 -> GroupWorkflow Left_Stim_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim_parametric_1_1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-12.49
              TranslationY=0
              TranslationZ=-188
              ScaleX=40
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        StringProperty(Value=it-300)
        -> PropertyMapping(Expression) => #19
        #0, #19 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-300

        Disable SubscribeSubject TunnelLength
        -> Disable Format => #22
        Disable StringProperty(Value=it-) => #23
        #23, #22 -> Disable CombineLatest
        -> Disable Add
    #2 -> Bonsai.Scripting.ExpressionTransform
      Expression: (it/2)-0.01
    -> PropertyMapping(TranslationXStim) => #12
    #0, #6, #12 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-100
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        SubscribeSubject tex_BG_0
        -> PropertyMapping(TextureName(Selector=it)) => #7
        #2, #3, #4, #5, #7 -> GroupWorkflow Right_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn2, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=12.5
              TranslationY=0
              TranslationZ=-68
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-400
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #3, #4, #5, #7 -> GroupWorkflow Right_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn2, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=12.5
              TranslationY=0
              TranslationZ=-368
              ScaleX=300
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-185
        -> PropertyMapping(TranslationZ(Selector=it)) => #13
        ExternalizedMapping(TranslationX(DisplayName=TranslationXStim)) => #14
        SubscribeSubject tex_Stim_Right_0
        -> PropertyMapping(TextureName(Selector=it)) => #16
        #3, #4, #13, #14, #16 -> GroupWorkflow Right_Stim_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim_parametric_1_5, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=12.49
              TranslationY=0
              TranslationZ=-153
              ScaleX=40
              ScaleY=12
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #0 -> Bonsai.Scripting.ExpressionTransform
      Expression: (it-200)/25
    -> PropertyMapping(TranslationZ) => #15
    #15, #7 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TextureName) => #1
        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #2
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
        #2, #3 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-6
          TranslationZ=-6.72
          ScaleX=25
          ScaleY=1000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-6, Z=148) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=1500, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput
    #15 -> GroupWorkflow Ceiling
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=clouds_1, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=80
          TranslationZ=-6.72
          ScaleX=1000
          ScaleY=1000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=6, Z=52) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=900, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput

        Disable SubscribeSubject Draw3DStim => #7
        Disable ExternalizedMapping(TextureName) => #8
        #7, #8 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #9
        Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #10
        #9, #10 -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-6
          TranslationZ=312
          ScaleX=20
          ScaleY=1500
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> Disable WorkflowOutput

        Disable GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-6, Z=148) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=1500, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0.3, Y=0.3, Z=0.3, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput

SubscribeSubject TrialNumber
-> DistinctUntilChanged

IntProperty(Value=0)
-> BehaviorSubject LickActivity
