<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>EssaySetup</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:CommandSubject.bonsai">
              <Name>BehaviorCommandBoard</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>z pos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RewOn</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevice</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorCommandBoard</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:DeviceState>Active</harp:DeviceState>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:LedState>On</harp:LedState>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disable</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM3</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>RawHarpData</Name>
                  </Expression>
                  <Expression xsi:type="p1:BehaviorEvent">
                    <p1:Type>AnalogInput</p1:Type>
                    <p1:Mask>Port0</p1:Mask>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>rawData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GiveReward</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardSize" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RewardSize</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>StartCamera</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>StopCamera</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommandBoard</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="harp:Device">
            <harp:DeviceState>Active</harp:DeviceState>
            <harp:DumpRegisters>true</harp:DumpRegisters>
            <harp:LedState>On</harp:LedState>
            <harp:VisualIndicators>On</harp:VisualIndicators>
            <harp:Heartbeat>Enable</harp:Heartbeat>
            <harp:IgnoreErrors>false</harp:IgnoreErrors>
            <harp:PortName>COM3</harp:PortName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p1:BehaviorEvent">
          <p1:Type>Input</p1:Type>
          <p1:Mask>Port0</p1:Mask>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p1:BehaviorEvent">
          <p1:Type>AnalogInput</p1:Type>
          <p1:Mask>Port0</p1:Mask>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:FlyCapture">
          <p2:Index>0</p2:Index>
          <p2:ColorProcessing>Default</p2:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>6144</gl:Width>
          <gl:Height>2194</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DimGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>SphereMapping</gl:Name>
              <gl:FileName>Models\SphereMapping.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedQuad">
              <gl:Name>WarpQuad</gl:Name>
              <gl:QuadEffects>None</gl:QuadEffects>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>CircleModel</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\ShaderModel.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\CircleShader.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>ColorModel</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\ShaderModel.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\colorShader.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>WarpOutput</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\Warp.vert</gl:VertexShader>
              <gl:FragmentShader>BonVision:Shaders.Image.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>WarpQuad</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureName />
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\WarpQuad.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\WarpQuad.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>gray</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\gray.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageSequence">
              <gl:Name>Database</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>ImageDatabase\Img%04d.jpg</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="BehaviorSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ReadPixels">
          <gl:RegionOfInterest xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton ShiftKey ControlKey A P Q Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>Termination</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="p1:BehaviorCommand">
                <p1:Type>StopCamera</p1:Type>
                <p1:Mask>Digital0</p1:Mask>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>BehaviorCommandBoard</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Delay">
                  <rx:DueTime>PT0.2S</rx:DueTime>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>CheckerLeftScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyState">
                <wie:Filter>NumPad7</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>4</NumberColumns>
        <NumberRows>4</NumberRows>
        <Phase>0</Phase>
        <ExtentX>2.7</ExtentX>
        <ExtentY>2</ExtentY>
        <LocationX>-2.7</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>CheckerMidScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyState">
                <wie:Filter>NumPad8</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>4</NumberColumns>
        <NumberRows>4</NumberRows>
        <Phase>0</Phase>
        <ExtentX>2.7</ExtentX>
        <ExtentY>2</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>CheckerRightScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyState">
                <wie:Filter>NumPad9</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>4</NumberColumns>
        <NumberRows>4</NumberRows>
        <Phase>0</Phase>
        <ExtentX>2.7</ExtentX>
        <ExtentY>2</ExtentY>
        <LocationX>2.7</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>CheckerUpLeft</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyState">
                <wie:Filter>NumPad5</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>3</NumberColumns>
        <NumberRows>3</NumberRows>
        <Phase>0</Phase>
        <ExtentX>1.35</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>2</LocationX>
        <LocationY>0.5</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>CheckerUpRight</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyState">
                <wie:Filter>NumPad6</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>3</NumberColumns>
        <NumberRows>3</NumberRows>
        <Phase>0</Phase>
        <ExtentX>1.35</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>3.5</LocationX>
        <LocationY>0.5</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>CheckerLowerLeft</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyState">
                <wie:Filter>NumPad2</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>3</NumberColumns>
        <NumberRows>3</NumberRows>
        <Phase>0</Phase>
        <ExtentX>1.35</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>2</LocationX>
        <LocationY>-0.5</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>CheckerLowerRight</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyState">
                <wie:Filter>NumPad3</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>3</NumberColumns>
        <NumberRows>3</NumberRows>
        <Phase>0</Phase>
        <ExtentX>1.35</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>3.5</LocationX>
        <LocationY>-0.5</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ManualReward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GiveReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>GiveReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="p1:BehaviorCommand">
                    <p1:Type>SetOutput</p1:Type>
                    <p1:Mask>Digital2</p1:Mask>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommandBoard</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>PCVars\RewardCalibration.csv</io:FileName>
                    <io:ListSeparator />
                    <io:ScanPattern>%f,%f</io:ScanPattern>
                    <io:SkipRows>1</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RewardSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Divide" />
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>PCVars\RewardCalibration.csv</io:FileName>
                    <io:ListSeparator />
                    <io:ScanPattern>%f,%f</io:ScanPattern>
                    <io:SkipRows>1</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>10000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.0572735S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:BehaviorCommand">
                    <p1:Type>ClearOutput</p1:Type>
                    <p1:Mask>Digital2</p1:Mask>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommandBoard</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="14" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>