<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>z pos</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>single(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>z pos</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\MouseEncoder.bonsai">
        <Gain>5</Gain>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowOutput" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>4096</gl:Width>
          <gl:Height>1536</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DimGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowOutput" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:RenderFrame" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:CreateCubemapCamera">
            <gl:Eye>
              <gl:X>0</gl:X>
              <gl:Y>0</gl:Y>
              <gl:Z>0</gl:Z>
            </gl:Eye>
            <gl:NearClip>0.1</gl:NearClip>
            <gl:FarClip>1000</gl:FarClip>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>new(
ViewMatrix as ViewMatrix,
ProjectionMatrix as ProjectionMatrix,
ViewMatrix.Row3.Yzw as Light)</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>Draw3DStim</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:RenderCubemap">
            <gl:RenderState />
            <gl:ClearColor>DarkBlue</gl:ClearColor>
            <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
            <gl:FaceSize>2048</gl:FaceSize>
            <gl:InternalFormat>Rgb</gl:InternalFormat>
            <gl:MinFilter>Linear</gl:MinFilter>
            <gl:MagFilter>Linear</gl:MagFilter>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
          <Width>21</Width>
          <Height>8</Height>
          <Rotation>
            <X>0</X>
            <Y>-53.0000003364945</Y>
            <Z>0</Z>
          </Rotation>
          <Translation>
            <X>-6.5</X>
            <Y>1</Y>
            <Z>-10</Z>
          </Translation>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
          <X>0</X>
          <Y>0</Y>
          <Width>0.5</Width>
          <Height>1</Height>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
          <Width>21</Width>
          <Height>8</Height>
          <Rotation>
            <X>0</X>
            <Y>53.0000003364945</Y>
            <Z>0</Z>
          </Rotation>
          <Translation>
            <X>6.5</X>
            <Y>1</Y>
            <Z>-10</Z>
          </Translation>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
          <X>0.5</X>
          <Y>0</Y>
          <Width>0.5</Width>
          <Height>1</Height>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:ReadPixels">
            <gl:RegionOfInterest xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Encoder</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>200</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="MulticastSubject">
        <Name>z pos</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>