<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>4096</gl:Width>
          <gl:Height>1536</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DimGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>currentFrame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Q</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Label1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>W</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Label2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyUp">
          <wie:Filter>None</wie:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>None</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>currentFrame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>None</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="10" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="10" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="10" Label="Source3" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source4" />
      <Edge From="10" To="11" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>