<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>4096</gl:Width>
          <gl:Height>2194</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="BehaviorSubject">
        <Name>DrawStimulus</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT1S</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Dur" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <RangeMin>0</RangeMin>
        <RangeMax>180</RangeMax>
        <Count>50</Count>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Permutation" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>22.0408173</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="TimeSpanProperty">
            <Value>PT0.5S</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="ITI" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>DirectionalGrating</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Dur" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Stim</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimulus</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="Dur" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Angle" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>7787.549</Angle>
                    <SpatialFrequency>5</SpatialFrequency>
                    <TemporalFrequency>1</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>5</Radius>
                    <Aperture>1</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>5</ExtentX>
                    <ExtentY>4</ExtentY>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>5000000</p1:Lower>
                      <p1:Upper>15000000</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="TimeSpanProperty">
                      <Value>PT0.7143256S</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.7143256S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DateTimeProperty">
                      <Value>0001-01-01T00:00:00</Value>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="11" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="16" Label="Source2" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source3" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>