<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>DeviceConfiguration</Name>
        <Description>Implementation of the available commands for the Monitor Control device.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DeviceOperation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Delay" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>12.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.25</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>33</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="T_On" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>41</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.25</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>34</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Period" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>62.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.25</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>35</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DoubleFrequency" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="34" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="34" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="34" Label="Source3" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="34" Label="Source4" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="27" To="30" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="32" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source5" />
            <Edge From="34" To="35" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>WriteConfigurationPermanently</Name>
        <Description>IfTrue, writes the configuration into the device's non-volatile memory.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>11</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Standby</harp:DeviceState>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>Off</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="NestedWorkflow">
          <Name>DeviceConfiguration</Name>
          <Description>Implementation of the available commands for the Monitor Control device.</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="DeviceOperation" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="BitwiseNot" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:CreateHarpMessage">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Payload>0</harp:Payload>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="Delay" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>12.5</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>0.25</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Divide" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:CreateHarpMessage">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>33</harp:Address>
                  <harp:PayloadType>U16</harp:PayloadType>
                  <harp:Payload>0</harp:Payload>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="T_On" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>42</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>0.25</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Divide" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:CreateHarpMessage">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>34</harp:Address>
                  <harp:PayloadType>U16</harp:PayloadType>
                  <harp:Payload>0</harp:Payload>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="Period" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>62.5</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>0.25</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Divide" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:CreateHarpMessage">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>35</harp:Address>
                  <harp:PayloadType>U16</harp:PayloadType>
                  <harp:Payload>0</harp:Payload>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="DoubleFrequency" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="BitwiseNot" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:CreateHarpMessage">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>36</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Payload>0</harp:Payload>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="1" To="4" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="6" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="34" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="11" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source2" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="34" Label="Source2" />
              <Edge From="14" To="15" Label="Source1" />
              <Edge From="15" To="17" Label="Source1" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="16" To="17" Label="Source2" />
              <Edge From="17" To="18" Label="Source1" />
              <Edge From="18" To="19" Label="Source1" />
              <Edge From="19" To="34" Label="Source3" />
              <Edge From="20" To="21" Label="Source1" />
              <Edge From="21" To="23" Label="Source1" />
              <Edge From="21" To="22" Label="Source1" />
              <Edge From="22" To="23" Label="Source2" />
              <Edge From="23" To="24" Label="Source1" />
              <Edge From="24" To="25" Label="Source1" />
              <Edge From="25" To="34" Label="Source4" />
              <Edge From="26" To="27" Label="Source1" />
              <Edge From="27" To="28" Label="Source1" />
              <Edge From="27" To="30" Label="Source1" />
              <Edge From="28" To="29" Label="Source1" />
              <Edge From="29" To="32" Label="Source1" />
              <Edge From="30" To="31" Label="Source1" />
              <Edge From="31" To="32" Label="Source2" />
              <Edge From="32" To="33" Label="Source1" />
              <Edge From="33" To="34" Label="Source5" />
              <Edge From="34" To="35" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>false</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="NestedWorkflow">
          <Name>WriteConfigurationPermanently</Name>
          <Description>IfTrue, writes the configuration into the device's non-volatile memory.</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>4</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:CreateHarpMessage">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>11</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Payload>0</harp:Payload>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Merge" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="harp:Device">
            <harp:DeviceState>Standby</harp:DeviceState>
            <harp:DumpRegisters>false</harp:DumpRegisters>
            <harp:LedState>On</harp:LedState>
            <harp:VisualIndicators>Off</harp:VisualIndicators>
            <harp:Heartbeat>Disable</harp:Heartbeat>
            <harp:IgnoreErrors>false</harp:IgnoreErrors>
            <harp:PortName>COM6</harp:PortName>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>