<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>FileEncoder</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timer">
                  <rx:DueTime>PT0S</rx:DueTime>
                  <rx:Period>PT0.01S</rx:Period>
                </Combinator>
              </Expression>
              <Expression xsi:type="SelectMany">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Range">
                        <rx:Start>0</rx:Start>
                        <rx:Count>10</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>true</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="2" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="FileName" />
              </Expression>
              <Expression xsi:type="io:CsvReader">
                <io:FileName>Data\EncoderTestData5v.csv</io:FileName>
                <io:ScanPattern>%d</io:ScanPattern>
                <io:SkipRows>0</io:SkipRows>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="PublishSubject">
                <Name>rawData</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="5" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>NidaqEncoder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:AnalogInput">
                <mx:SignalSource />
                <mx:SampleRate>1000</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>10</mx:BufferSize>
                <mx:SamplesPerRead>-1</mx:SamplesPerRead>
                <mx:Channels>
                  <mx:AnalogInputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:MinimumValue>-10</mx:MinimumValue>
                    <mx:MaximumValue>10</mx:MaximumValue>
                    <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
                    <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
                    <mx:VoltageUnits>Volts</mx:VoltageUnits>
                  </mx:AnalogInputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>rawData</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>Data\EncoderTestData5v.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>HarpEencoder</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:Device">
                  <harp:DeviceState>Active</harp:DeviceState>
                  <harp:DumpRegisters>true</harp:DumpRegisters>
                  <harp:LedState>On</harp:LedState>
                  <harp:VisualIndicators>On</harp:VisualIndicators>
                  <harp:Heartbeat>Disable</harp:Heartbeat>
                  <harp:IgnoreErrors>false</harp:IgnoreErrors>
                  <harp:PortName>COM11</harp:PortName>
                </Combinator>
              </Expression>
              <Expression xsi:type="p1:BehaviorEvent">
                <p1:Type>AnalogInput</p1:Type>
                <p1:Mask>Port0</p1:Mask>
              </Expression>
              <Expression xsi:type="PublishSubject">
                <Name>rawData</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>Data\EncoderTestData5v.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>rawData</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it as Position,
0.0 as Diference,
2 as Turns)</scr:Expression>
      </Expression>
      <Expression xsi:type="Scan">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Position</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt; 1 ? 1.0 : it &lt; -1 ? -1.0 : 0.0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2.Value.Position as Position,
Item1 as Diference,
Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 &gt; 0 ? -1 : (Item1 &lt; 0 ? 1 : 0)))) as Turns)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Position+(Turns*4.9)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Butterworth">
          <dsp:SampleRate>1000</dsp:SampleRate>
          <dsp:Cutoff1>10</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:FilterOrder>3</dsp:FilterOrder>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>25</dsp:Count>
          <dsp:Skip>1</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="13" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="8" To="14" Label="Source2" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source3" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>