<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\NidaqEncoder.bonsai">
          <Name>rawData</Name>
          <minValueNormalization>0.0819716981081552</minValueNormalization>
          <scaleNormalization>1.02419429447844</scaleNormalization>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>Data\EncoderTestData5v.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpEncoder.bonsai">
        <Name>rawData</Name>
        <minValueNormalization>0.0819716981081552</minValueNormalization>
        <scaleNormalization>1.02419429447844</scaleNormalization>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>Data\EncoderTestData5v.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\FileEncoder.bonsai">
          <FileName>Data\EncoderTestData5v.csv</FileName>
          <Name>rawData</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\TurnPositionCalculationNew.bonsai" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Buffer">
            <dsp:Count>1</dsp:Count>
            <dsp:Skip xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnPositionCalculation.bonsai">
        <WheelPerimeter_x0028_cm_x0029_>62.832</WheelPerimeter_x0028_cm_x0029_>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>