<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>StartCamera</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>StopCamera</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM5</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>\BonsaiData\bindata</dsp:Path>
            <dsp:Suffix>Timestamp</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>ColumnMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>Input</p1:Type>
        <p1:Mask>Port0</p1:Mask>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>AnalogInput</p1:Type>
        <p1:Mask>Port0</p1:Mask>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>runstarttrials.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Output Dir" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\BonsaiData\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\BonsaiData\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Mouse Name" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\User\Documents\RunFast_LOGS\BonsaiData\ss21runstarttrials.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>cameracsv.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>camera.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>\BonsaiData\testcameracsv.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\BonsaiData\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>\BonsaiData\testcamera.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="20" Label="Source1" />
      <Edge From="11" To="17" Label="Source3" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="12" To="34" Label="Source1" />
      <Edge From="13" To="17" Label="Source1" />
      <Edge From="14" To="24" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="21" Label="Source1" />
      <Edge From="15" To="22" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="21" To="24" Label="Source2" />
      <Edge From="22" To="35" Label="Source2" />
      <Edge From="23" To="24" Label="Source3" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="33" Label="Source1" />
      <Edge From="27" To="35" Label="Source3" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="29" To="38" Label="Source2" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>