WorkflowBuilder(Version=2.6.2)
GroupWorkflow Camera
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
    -> MemberSelector(Selector=Image) => #1
    -> BehaviorSubject CameraImage
    #1 -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Crop(RegionOfInterest(X=423, Y=380, Width=19, Height=21))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=DoubleProperty(Value=25))
    -> BehaviorSubject LickActivity
    #0 -> MemberSelector(Selector="Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter")
    -> BehaviorSubject CameraMetadata

GroupWorkflow EssaySetup
    Disable IncludeWorkflow rawData(Path=Extensions\FileEncoder.bonsai, FileName=Data\EncoderTestData5v.csv)
    Disable IncludeWorkflow rawData(Path=Extensions\NidaqEncoder.bonsai, minValueNormalization=0.0819716981081552, scaleNormalization=1.02419429447844)

    GroupWorkflow HarpDevice
        Disable SubscribeSubject MissTrialsNumber => #0
        SubscribeSubject "z pos" => #1
        SubscribeSubject "opto stim on"
        -> Bonsai.Scripting.ExpressionTransform "Convert Bool" => #3
          Expression: it? 1 : 0
        SubscribeSubject TrialNumber => #4
        #4, #0 -> Disable CombineLatest
        -> Disable Subtract
        #4 -> Add(Operand=IntProperty(Value=1)) => #7
        SubscribeSubject RewOn
        -> Bonsai.Scripting.ExpressionTransform "Convert Bool" => #9
          Expression: it? 1 : 0
        ExternalizedMapping(Name)
        -> SubscribeSubject BehaviorCommandBoard
        -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM7) => #12
        -> Bonsai.Harp.FilterMessage(Address=nil, MessageType=nil)
        -> Bonsai.Harp.DeviceEvent(Type=MessageTimestamp) => #14
        #14, #7 -> WithLatestFrom => #15
        #15, #1 -> WithLatestFrom => #16
        #16, #3 -> WithLatestFrom => #17
        #17, #9 -> WithLatestFrom => #18
        #12 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #19
        #18, #19 -> WithLatestFrom => #20
        #1 -> Bonsai.Dsp.Difference(Order=1)
        -> Multiply(Operand=DoubleProperty(Value=1000)) => #22
        #20, #22 -> WithLatestFrom => #23
        #12 -> MemberSelector(Selector=MessageBytes)
        -> BehaviorSubject RawHarpData
        #12 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #26
        ExternalizedMapping(Value(DisplayName=minValueNormalization)) => #27
        #26, #27 -> Disable Subtract(Operand=DoubleProperty(Value=0.1221047)) => #28
        Disable ExternalizedMapping(Value(DisplayName=scaleNormalization)) => #29
        #28, #29 -> Disable Multiply(Operand=DoubleProperty(Value=1.029505415093432))
        -> PublishSubject rawData
        SubscribeSubject "TrialChange ON"
        -> Bonsai.Scripting.ExpressionTransform "Convert Bool" => #33
          Expression: it? 1 : 0
        #23, #33 -> WithLatestFrom => #34
        SubscribeSubject LickActivity
        -> Bonsai.Scripting.ExpressionTransform "Convert Bool" => #36
          Expression: it? 1 : 0
        #34, #36 -> WithLatestFrom => #37
        SubscribeSubject MissTrialsNumber => #38
        #37, #38 -> WithLatestFrom
        -> BehaviorSubject HarpData

    IncludeWorkflow BehaviorCommandBoard(Path=Bonsai.Harp:CommandSubject.bonsai)
    Disable IncludeWorkflow rawData(Path=Extensions\HarpEencoder.bonsai, minValueNormalization=0.0819716981081552, scaleNormalization=1.02419429447844)

    FloatProperty(Value=0) => #5
    -> BehaviorSubject "z pos"
    #5 -> BehaviorSubject StartPos

    ExternalizedMapping(Value(DisplayName=Gain)) => #8
    GroupWorkflow TurnPositionCalculation
        SubscribeSubject rawData => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it as Position,
            0.0 as Diference,
            0 as Turns)
        -> Scan
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Position)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
            #3, #0 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item2.Value.Position as Position,
                Item1 as Diference,
                Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform
          Expression: ((Position-0.067975830000000)/4.730614170000000)+Turns
        -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass) => #4
        -> Disable First => #5
        #4, #5 -> Disable WithLatestFrom
        -> Disable Subtract
        -> Bonsai.Dsp.Difference(Order=1) => #8
        ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #9
        #8, #9 -> Multiply(Operand=DoubleProperty(Value=62.832))
        -> WorkflowOutput
        #0 -> Take(Count=2000)
        -> Max
        #0 -> Take(Count=2000)
        -> Min
    -> Disable Bonsai.Dsp.Difference(Order=1) => #10
    #10, #8 -> Multiply(Operand=DoubleProperty(Value=1))
    -> BehaviorSubject Encoder

    Disable IncludeWorkflow(Path=Extensions\MouseEncoder.bonsai, Gain=5)
    -> Disable PublishSubject Encoder

    StringProperty
    -> IgnoreElements
    -> BehaviorSubject OlfactometerCommands

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1) => #18
    -> BehaviorSubject tex0
    #18 -> BehaviorSubject tex1
    #18 -> BehaviorSubject tex2
    #18 -> BehaviorSubject tex3

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> BehaviorSubject StimOn

    BooleanProperty(Value=false)
    -> BehaviorSubject RewOn

    FloatProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject RewardLocation

    FloatProperty(Value=70)
    -> BehaviorSubject PopUpLocation0

    FloatProperty(Value=210)
    -> BehaviorSubject PopUpLocation1

    IntProperty(Value=0)
    -> BehaviorSubject MissTrialsNumber

    IntProperty(Value=0)
    -> BehaviorSubject RewardTrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject HitsTrialsNumber

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1) => #42
    -> IgnoreElements
    -> BehaviorSubject TempTex0
    #42 -> IgnoreElements
    -> BehaviorSubject TempTex1
    #42 -> IgnoreElements
    -> BehaviorSubject TempTex2
    #42 -> IgnoreElements
    -> BehaviorSubject TempTex3

    FloatProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject OptoStimEnabled

    FloatProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject OptoStimLocation

    BooleanProperty(Value=false)
    -> BehaviorSubject "opto stim on"

    BooleanProperty(Value=false)
    -> BehaviorSubject "TrialChange ON"

Bonsai.Shaders.CreateWindow
  Width=4096
  Height=1536
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> Disable Bonsai.Shaders.CreateWindow
  Width=4968
  Height=1536
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Hidden
  WindowState=Maximized
  DisplayDevice=First
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratingsMinus45Degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratingsMinus45Degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_90degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_90degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_15degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_15degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gratings_30degrees
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gratings_30degrees.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=0_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\0_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_10.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_20
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_20.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf1_40
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf1_40.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grid_minus20Bright
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grid_minus20Bright.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grid_minus40Bright
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grid_minus40Bright.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus15_sf80
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus15_sf80.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus20_sf80
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus20_sf80.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=minus25_sf80
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\minus25_sf80.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=zero_sf80
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\zero_sf80.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=20_sf80
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\20_sf80.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=black_background
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\black_background.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> Disable IncludeWorkflow
  Path=BonVision:Environment.PerspectiveView.bonsai
  Light(X=0, Y=1, Z=1)
  FieldOfView=81.63721
  Eye(X=0, Y=0, Z=0)
  Target(X=-0, Y=-0, Z=-1)
  Up(X=0, Y=1, Z=0)
  NearClip=0.1
  FarClip=1000
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #16
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=29, Height=10, Rotation(X=0, Y=-53.0000003364945, Z=0), Translation(X=-8.8, Y=1, Z=-13.3))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1)
#16 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=29, Height=10, Rotation(X=0, Y=53.0000003364945, Z=0), Translation(X=8.8, Y=1, Z=-13.3))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1)
-> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(ScaleY, TranslationY) => #4
    ExternalizedMapping(Value(DisplayName=Width))
    -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=ScaleY, Value=20) => #6
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #8
    #6 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #10
    #6 -> PropertyMapping(ScaleX) => #11
    #3, #11 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn4, TextureTarget=Texture2D) => #3
        #3, #1 -> GroupWorkflow DrawStripeModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-3, Z=347.3499) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #7
            #3, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #8
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #11
            #8, #11 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #12
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=90)
            -> PropertyMapping(Angle) => #15
            #12, #15 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #16
            #16, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=20, Y=900, Z=0) => #17
            ExternalizedMapping(ShaderName) => #18
            #17, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=ColorModel) => #19
            #0 -> MemberSelector(Selector=ProjectionMatrix) => #20
            ExternalizedMapping(MeshName) => #21
            #20, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=ColorModel) => #22
            #19, #22 -> Zip => #23
            ExternalizedMapping(Value(DisplayName=Scale)) => #24
            #23, #24 -> PropertySource<Bonsai.Shaders.CreateMatrix2,OpenTK.Vector2>(MemberName=Row1, Value(X=1, Y=1)) => #25
            ExternalizedMapping(Value(DisplayName=Color)) => #26
            #25, #26 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=0, Y=0, Z=0, W=1)) => #27
            #27, #18 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=ColorModel) => #28
            ExternalizedMapping(Value(DisplayName=BackColor)) => #29
            #28, #29 -> PropertySource<Bonsai.Shaders.CreateMatrix4,OpenTK.Vector4>(MemberName=Row0, Value(X=1, Y=1, Z=1, W=1)) => #30
            #30, #18, #21 -> Bonsai.Shaders.DrawMesh(ShaderName=ColorModel, MeshName=Plane)
            -> WorkflowOutput
        -> WorkflowOutput
    #2, #4, #8 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-45
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        SubscribeSubject tex0
        -> PropertyMapping(TextureName(Selector=it)) => #7
        SubscribeSubject tex1
        -> PropertyMapping(TextureName(Selector=it)) => #9
        SubscribeSubject tex2
        -> PropertyMapping(TextureName(Selector=it)) => #11
        SubscribeSubject tex3
        -> PropertyMapping(TextureName(Selector=it)) => #13
        #2, #3, #4, #5, #13 -> GroupWorkflow Left0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=302.3499
              ScaleX=120
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-125
        -> PropertyMapping(TranslationZ(Selector=it)) => #16
        #16, #3, #4, #5, #7 -> GroupWorkflow Left1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=zero_sf80, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=222.349915
              ScaleX=40
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-177.5
        -> PropertyMapping(TranslationZ(Selector=it)) => #19
        SubscribeSubject tex3
        -> PropertyMapping(TextureName(Selector=it)) => #21
        #19, #3, #4, #5, #21 -> GroupWorkflow Left2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=169.849915
              ScaleX=65
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-230
        -> PropertyMapping(TranslationZ(Selector=it)) => #24
        #24, #3, #4, #5, #9 -> GroupWorkflow Left3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=minus20_sf80, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=117.349915
              ScaleX=40
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-282.5
        -> PropertyMapping(TranslationZ(Selector=it)) => #27
        SubscribeSubject tex3
        -> PropertyMapping(TextureName(Selector=it)) => #29
        #27, #3, #4, #5, #29 -> GroupWorkflow Left4
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=64.8499146
              ScaleX=65
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-335
        -> PropertyMapping(TranslationZ(Selector=it)) => #32
        #32, #3, #4, #5, #11 -> GroupWorkflow Left5
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=20_sf80, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=12.3499146
              ScaleX=40
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-387.5
        -> PropertyMapping(TranslationZ(Selector=it)) => #35
        SubscribeSubject tex3
        -> PropertyMapping(TextureName(Selector=it)) => #37
        #35, #3, #4, #5, #37 -> GroupWorkflow Left6
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-40.1500854
              ScaleX=65
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-495
        -> PropertyMapping(TranslationZ(Selector=it)) => #40
        #40, #3, #4, #5 -> GroupWorkflow Left8
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-10
              TranslationY=3
              TranslationZ=-147.650085
              ScaleX=150
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
    #2, #4, #10 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-45
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        SubscribeSubject tex0
        -> PropertyMapping(TextureName(Selector=it)) => #7
        SubscribeSubject tex1
        -> PropertyMapping(TextureName(Selector=it)) => #9
        SubscribeSubject tex2
        -> PropertyMapping(TextureName(Selector=it)) => #11
        SubscribeSubject tex3
        -> PropertyMapping(TextureName(Selector=it)) => #13
        #2, #3, #4, #5, #13 -> GroupWorkflow Right0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=302.3499
              ScaleX=120
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-125
        -> PropertyMapping(TranslationZ(Selector=it)) => #16
        #16, #3, #4, #5, #7 -> GroupWorkflow Right1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=zero_sf80, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=222.349915
              ScaleX=40
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-177.5
        -> PropertyMapping(TranslationZ(Selector=it)) => #19
        SubscribeSubject tex3
        -> PropertyMapping(TextureName(Selector=it)) => #21
        #19, #3, #4, #5, #21 -> GroupWorkflow Right2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=169.849915
              ScaleX=65
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-230
        -> PropertyMapping(TranslationZ(Selector=it)) => #24
        #24, #3, #4, #5, #9 -> GroupWorkflow Right3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=minus20_sf80, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=117.349915
              ScaleX=40
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-282.5
        -> PropertyMapping(TranslationZ(Selector=it)) => #27
        SubscribeSubject tex3
        -> PropertyMapping(TextureName(Selector=it)) => #29
        #27, #3, #4, #5, #29 -> GroupWorkflow Right4
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=64.8499146
              ScaleX=65
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-335
        -> PropertyMapping(TranslationZ(Selector=it)) => #32
        #32, #3, #4, #5, #11 -> GroupWorkflow Right5
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=20_sf80, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=12.3499146
              ScaleX=40
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-387.5
        -> PropertyMapping(TranslationZ(Selector=it)) => #35
        SubscribeSubject tex3
        -> PropertyMapping(TextureName(Selector=it)) => #37
        #35, #3, #4, #5, #37 -> GroupWorkflow Right6
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-40.1500854
              ScaleX=65
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-495
        -> PropertyMapping(TranslationZ(Selector=it)) => #40
        #40, #3, #4, #5 -> GroupWorkflow Right8
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=10
              TranslationY=3
              TranslationZ=-147.650085
              ScaleX=150
              ScaleY=12.0001
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput

Timer(DueTime=PT1S, Period=PT0S)
-> SelectMany Initialize
    WorkflowInput Source1
    -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S) => #2
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard
    #2 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
-> TakeLast(Count=1)
-> SelectMany RunTime
    Bonsai.IO.CsvReader(FileName=Protocols\Opto\May2022\EXP_TrialSequence_Goncalo_3conditions_Lick_Opto2nd.csv, ScanPattern="%s,%s,%s,%s,%l,%l,%l", SkipRows=1)
    -> Disable Bonsai.Numerics.Permutation
    -> CreateObservable
        WorkflowInput Source1 => #0
        -> Take(Count=1) => #1
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject TempTex0
        -> Disable GroupWorkflow EnablePopUp
            WorkflowInput Source1
            -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1)
            -> WorkflowOutput
        -> MulticastSubject tex0
        -> IntProperty(Value=1)
        -> Accumulate
        -> MulticastSubject TrialNumber
        #1 -> MemberSelector(Selector=Item3)
        -> MulticastSubject TempTex1
        -> Disable GroupWorkflow EnablePopUp
            WorkflowInput Source1
            -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1)
            -> WorkflowOutput
        -> MulticastSubject tex1
        #1 -> MemberSelector(Selector=Item4)
        -> MulticastSubject TempTex2
        -> Disable GroupWorkflow EnablePopUp
            WorkflowInput Source1
            -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1)
            -> WorkflowOutput
        -> MulticastSubject tex2
        #1 -> MemberSelector(Selector=Item6)
        -> MulticastSubject RewardLocation
        #1 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital3)
        -> MulticastSubject BehaviorCommandBoard
        -> Sink "Trial ON"
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject "TrialChange ON"
            -> WorkflowOutput
        -> Delay(DueTime=PT0.2S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital3)
        -> MulticastSubject BehaviorCommandBoard
        -> Sink "Trial OFF"
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject "TrialChange ON"
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=Item7)
        -> Disable MulticastSubject OptoStimEnabled
        -> MulticastSubject OptoStimLocation
        #1 -> MemberSelector(Selector=Item5)
        -> MulticastSubject StartPos
        #1 -> MemberSelector(Selector=Item1)
        -> MulticastSubject TempTex3
        -> Disable GroupWorkflow EnablePopUp
            WorkflowInput Source1
            -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=fwn1)
            -> WorkflowOutput
        -> MulticastSubject tex3
        #0 -> SelectMany StimRewControl
            Disable SubscribeSubject "z pos" => #0
            Disable SubscribeSubject RewardLocation
            -> Disable DistinctUntilChanged => #2
            -> Disable Add(Operand=FloatProperty(Value=30))
            -> Disable PropertyMapping(LickIntervalLocation) => #4
            #2 -> Disable PropertyMapping(RewardLocation) => #5
            #0, #5, #4 -> Disable GroupWorkflow RewardCondition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=LickIntervalLocation)) => #1
                ExternalizedMapping(Value(DisplayName=RewardLocation)) => #2
                #0, #2 -> SkipWhile => #3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=375))
                    -> WorkflowOutput
                #3, #1 -> TakeWhile => #4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThan(Operand=FloatProperty(Value=405))
                    -> WorkflowOutput
                SubscribeSubject LickActivity => #5
                #4, #5 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> FirstOrDefault
                -> WorkflowOutput
            -> Disable Take(Count=1) => #7
            -> Disable Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable GroupWorkflow Reward
                ExternalizedMapping(DueTime(DisplayName=RewardDuration)) => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(DueTime(DisplayName=ReportDelay)) => #2
                #1, #2 -> Delay(DueTime=PT0.005S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink RewUp => #6
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                #6, #0 -> Delay(DueTime=PT0.15S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink RewDown
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            -> Disable Take(Count=1) => #10
            #7 -> Disable Condition => #11
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            Disable SubscribeSubject MissTrialsNumber
            -> Disable PropertyMapping(Value) => #13
            #11, #13 -> Disable IntProperty(Value=104)
            -> Disable Add(Operand=IntProperty(Value=1))
            -> Disable MulticastSubject MissTrialsNumber
            -> Disable BooleanProperty(Value=true)
            -> Disable GroupWorkflow NoReward => #18
                WorkflowInput Source1
                -> WorkflowOutput
            #10, #18 -> Disable Merge
            -> Disable Take(Count=1)
            -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Port0)
            -> Disable MulticastSubject BehaviorCommandBoard
            -> Disable Sink RewDown
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject RewOn
                -> WorkflowOutput
            #0 -> Disable GroupWorkflow PopUP
                SubscribeSubject PopUpLocation0
                -> DistinctUntilChanged
                -> PropertyMapping(Value) => #2
                SubscribeSubject PopUpLocation1
                -> DistinctUntilChanged
                -> PropertyMapping(Value) => #5
                WorkflowInput Source1
                -> Skip(Count=1) => #7
                #2, #7 -> GreaterThanOrEqual(Operand=FloatProperty(Value=70))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject CatchTrial
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> BooleanProperty(Value=true)
                    -> WorkflowOutput
                -> First
                -> Disable DistinctUntilChanged
                -> GroupWorkflow stimulusOnset
                    WorkflowInput Source1 => #0
                    SubscribeSubject TempTex0
                    -> MulticastSubject tex0 => #2
                    #2, #0 -> SubscribeWhen
                    -> WorkflowOutput
                -> Disable GroupWorkflow stimuluOffset
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Disable First
                -> Disable Sink StimOff
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject StimOn
                    -> WorkflowOutput
                #5, #7 -> GreaterThanOrEqual(Operand=FloatProperty(Value=210))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject CatchTrial
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> BooleanProperty(Value=true)
                    -> WorkflowOutput
                -> First
                -> DistinctUntilChanged
                -> GroupWorkflow stimulusOnset
                    WorkflowInput Source1 => #0
                    SubscribeSubject TempTex1
                    -> MulticastSubject tex1 => #2
                    #2, #0 -> SubscribeWhen
                    -> WorkflowOutput
                -> Disable GroupWorkflow stimuluOffset
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> First
                -> Sink StimOff
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject StimOn
                    -> WorkflowOutput

            SubscribeSubject "z pos" => #25
            SubscribeSubject RewardLocation
            -> DistinctUntilChanged => #27
            -> Add(Operand=FloatProperty(Value=30))
            -> PropertyMapping(LickIntervalLocation) => #29
            #27 -> PropertyMapping(RewardLocation) => #30
            #25, #30, #29 -> GroupWorkflow RewardCondition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=LickIntervalLocation)) => #1
                ExternalizedMapping(Value(DisplayName=RewardLocation)) => #2
                #0, #2 -> SkipWhile => #3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=365))
                    -> WorkflowOutput
                #3, #1 -> TakeWhile => #4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThan(Operand=FloatProperty(Value=395))
                    -> WorkflowOutput
                SubscribeSubject LickActivity => #5
                #4, #5 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> FirstOrDefault
                -> WorkflowOutput
            -> Take(Count=1) => #32
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> GroupWorkflow "Lick Reward"
                ExternalizedMapping(DueTime(DisplayName=RewardDuration)) => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(DueTime(DisplayName=ReportDelay)) => #2
                #1, #2 -> Delay(DueTime=PT0.005S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink RewUp => #6
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                #6, #0 -> Delay(DueTime=PT0.15S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink RewDown
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            -> Take(Count=1) => #35
            #32 -> Condition => #36
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            SubscribeSubject MissTrialsNumber
            -> PropertyMapping(Value) => #38
            #36, #38 -> IntProperty(Value=2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject MissTrialsNumber
            -> BooleanProperty(Value=true)
            -> GroupWorkflow DefaultReward
                ExternalizedMapping(DueTime(DisplayName=RewardDuration)) => #0
                WorkflowInput Source1 => #1
                Disable ExternalizedMapping(DueTime(DisplayName=ReportDelay)) => #2
                #1, #2 -> Disable Delay(DueTime=PT0.005S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink RewUp => #6
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                #6, #0 -> Delay(DueTime=PT0.1S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink RewDown
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject RewOn
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            -> Take(Count=1) => #44
            #35, #44 -> Merge
            -> Take(Count=1)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Port2)
            -> MulticastSubject BehaviorCommandBoard
            -> Sink RewDown
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject RewOn
                -> WorkflowOutput
            #25 -> Disable GroupWorkflow PopUP
                SubscribeSubject PopUpLocation0
                -> DistinctUntilChanged
                -> PropertyMapping(Value) => #2
                SubscribeSubject PopUpLocation1
                -> DistinctUntilChanged
                -> PropertyMapping(Value) => #5
                WorkflowInput Source1
                -> Skip(Count=1) => #7
                #2, #7 -> GreaterThanOrEqual(Operand=FloatProperty(Value=70))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject CatchTrial
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> BooleanProperty(Value=true)
                    -> WorkflowOutput
                -> First
                -> Disable DistinctUntilChanged
                -> GroupWorkflow stimulusOnset
                    WorkflowInput Source1 => #0
                    SubscribeSubject TempTex0
                    -> MulticastSubject tex0 => #2
                    #2, #0 -> SubscribeWhen
                    -> WorkflowOutput
                -> Disable GroupWorkflow stimuluOffset
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Disable First
                -> Disable Sink StimOff
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject StimOn
                    -> WorkflowOutput
                #5, #7 -> GreaterThanOrEqual(Operand=FloatProperty(Value=210))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject CatchTrial
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> BooleanProperty(Value=true)
                    -> WorkflowOutput
                -> First
                -> DistinctUntilChanged
                -> GroupWorkflow stimulusOnset
                    WorkflowInput Source1 => #0
                    SubscribeSubject TempTex1
                    -> MulticastSubject tex1 => #2
                    #2, #0 -> SubscribeWhen
                    -> WorkflowOutput
                -> Disable GroupWorkflow stimuluOffset
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> First
                -> Sink StimOff
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject StimOn
                    -> WorkflowOutput
        #0 -> SelectMany OptoStimControl
            SubscribeSubject "z pos" => #0
            SubscribeSubject OptoStimLocation => #1
            -> DistinctUntilChanged
            -> Add(Operand=DoubleProperty(Value=40))
            -> PropertyMapping(Value) => #4
            #1 -> PropertyMapping(Value) => #5
            #0, #5 -> SkipWhile => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThanOrEqual(Operand=IntProperty(Value=195))
                -> WorkflowOutput
            #6, #4 -> TakeWhile => #7
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=235))
                -> WorkflowOutput
            -> Take(Count=1) => #8
            #7, #8 -> WithLatestFrom
            -> Subtract
            -> Multiply(Operand=FloatProperty(Value=1))
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Double(it)
            -> Bonsai.Numerics.Truncate
            -> DistinctUntilChanged => #14
            ExternalizedMapping(Value(DisplayName=period)) => #15
            #14, #15 -> Mod(Operand=FloatProperty(Value=8)) => #16
            ExternalizedMapping(Value(DisplayName=phase)) => #17
            #16, #17 -> Equal(Operand=FloatProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> CreateObservable
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Port0)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink OptoON
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject "opto stim on"
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.05S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Port0)
                -> MulticastSubject BehaviorCommandBoard
                -> Sink OptoOFF
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject "opto stim on"
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Merge
            -> TakeLast(Count=1)

        GroupWorkflow Movement => #37
            SubscribeSubject Encoder
            -> Accumulate
            -> Disable TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression: it < 0 ? 0 : it
            -> Bonsai.Scripting.ExpressionTransform => #4
              Expression: single(it)
            SubscribeSubject StartPos => #5
            #4, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject "z pos"
            -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=405))
                -> WorkflowOutput
            -> Unit
            -> WorkflowOutput

            SubscribeSubject Encoder
        Disable SubscribeSubject TrialNumber => #38
        #37, #38 -> Disable WithLatestFrom
        -> Last
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Add(Operand=IntProperty(Value=1))
        -> Disable MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Concat
    -> Last
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1
    -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard

ExternalizedMapping(MouseName)
-> GroupWorkflow Logger
    ExternalizedMapping(Value(DisplayName=OutputDir)) => #0
    -> StringProperty(Value=BonsaiData\) => #1
    ExternalizedMapping(Value(DisplayName=MouseName)) => #2
    -> StringProperty(Value=gf009_220705_1stSession) => #3
    #2 -> StringProperty(Value=gf009_220705_1stSession) => #4
    #2 -> StringProperty(Value=gf009_220705_1stSession) => #5
    #2 -> StringProperty(Value=gf009_220705_1stSession) => #6
    StringProperty(Value=cameracsv.csv) => #7
    #1, #3, #7 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #10
    StringProperty(Value=camera.avi) => #11
    SubscribeSubject CameraImage => #12
    SubscribeSubject CameraMetadata => #13
    #13, #10 -> Bonsai.IO.CsvWriter(FileName=BonsaiData\gf009_220705_1stSessioncameracsv.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=BonsaiData\) => #15
    #15, #4, #11 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #18
    #12, #18 -> Bonsai.Vision.VideoWriter
      FileName=BonsaiData\gf009_220705_1stSessioncamera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #0 -> StringProperty(Value=BonsaiData\) => #20
    SubscribeSubject HarpData => #21
    SubscribeSubject RawHarpData => #22
    StringProperty(Value=harp.csv) => #23
    #20, #5, #23 -> CombineLatest
    -> Add
    -> PropertyMapping(FileName) => #26
    #21, #26 -> Bonsai.IO.CsvWriter(FileName=BonsaiData\gf009_220705_1stSessionharp.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    #0 -> StringProperty(Value=BonsaiData\) => #28
    StringProperty(Value=rawharp.bin) => #29
    #28, #6, #29 -> CombineLatest
    -> Add
    -> PropertyMapping(Path) => #32
    #22, #32 -> Bonsai.Dsp.MatrixWriter(Path=BonsaiData\gf009_220705_1stSessionrawharp.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
-> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
-> MulticastSubject BehaviorCommandBoard
-> Delay(DueTime=PT0.1S)
-> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
-> MulticastSubject BehaviorCommandBoard
-> Repeat

Disable Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=true)
-> Disable Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
-> Disable MulticastSubject BehaviorCommandBoard

SubscribeSubject MissTrialsNumber
SubscribeSubject LickActivity
