WorkflowBuilder(Version=2.6.2)
GroupWorkflow Init
    Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
    -> ToArray
    -> Index(Operand=IntProperty(Value=0))
    -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
    -> ReplaySubject ledOffCommand(BufferSize=nil)
    -> WorkflowOutput

GroupWorkflow HarpDevices
    Bonsai.Harp.CreateMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
    -> IgnoreElements
    -> BehaviorSubject RGBLedCommands
    -> BehaviorSubject "SoundCard Commands"
    -> BehaviorSubject AudioSwitchCommands
    -> BehaviorSubject ClockSynchroCommands

    IncludeWorkflow Timestamp(Path=Bonsai.Harp:TimestampSubject.bonsai)

    SubscribeSubject AudioSwitchCommands
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=Off, VisualIndicators=Off, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    -> BehaviorSubject AudioSwitchEvents
    -> MemberSelector(Selector=MessageBytes)
    -> Bonsai.Dsp.MatrixWriter(Path=harpRegisters\AudioSwitch.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject "SoundCard Commands"
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=Off, VisualIndicators=Off, Heartbeat=Disable, IgnoreErrors=false, PortName=COM6)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    -> BehaviorSubject SoundCardEvents
    -> MemberSelector(Selector=MessageBytes)
    -> Bonsai.Dsp.MatrixWriter(Path=harpRegisters\SoundCard.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject ClockSynchroCommands
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=Off, VisualIndicators=Off, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    -> BehaviorSubject ClockSynchroEvents
    -> MemberSelector(Selector=MessageBytes)
    -> Bonsai.Dsp.MatrixWriter(Path=harpRegisters\ClockSynchro.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject RGBLedCommands
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=Off, VisualIndicators=Off, Heartbeat=Enable, IgnoreErrors=false, PortName=COM5)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    -> BehaviorSubject RGBLedEvents
    -> MemberSelector(Selector=MessageBytes)
    -> Bonsai.Dsp.MatrixWriter(Path=harpRegisters\RGBLed.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    BehaviorSubject<Bonsai.Harp.HarpMessage> BhvCommand
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=Off, VisualIndicators=Off, Heartbeat=Disable, IgnoreErrors=false, PortName=COM8)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    -> MemberSelector(Selector=MessageBytes)
    -> Bonsai.Dsp.MatrixWriter(Path=harpRegisters\BHVcommand.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

GroupWorkflow InitHW
    Disable IntProperty(Value=1000)
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=PwmFrequency, Mask=Digital3)
    -> Disable MulticastSubject BhvCommand

    Disable IntProperty(Value=10)
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=PwmDutyCycle, Mask=Digital3)
    -> Disable MulticastSubject BhvCommand

    IntProperty(Value=50)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Digital0)
    -> MulticastSubject BhvCommand

    Disable IntProperty(Value=200)
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=StopPwm, Mask=Digital3)
    -> Disable MulticastSubject BhvCommand

    IntProperty(Value=5)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Digital2)
    -> MulticastSubject BhvCommand

Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany RandomITI
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=4)
    -> Bonsai.Numerics.Distributions.Sample
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT2.376S, Period=PT0S)
    -> WorkflowOutput
-> SelectMany Attenuation
    SubscribeSubject trialNumber => #0
    SubscribeSubject trialAttenuation => #1
    WorkflowInput Source1 => #2
    #2, #0 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Value) => #5
    #2, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #7
    #5, #7 -> Index(Operand=IntProperty(Value=5))
    -> DistinctUntilChanged
    -> PropertyMapping(Payload)
    -> Bonsai.Harp.CreateMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=34)
    -> MulticastSubject "SoundCard Commands"
    -> WorkflowOutput
-> Disable SelectMany drawTimeWoLick
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=4, Upper=4)
    -> Bonsai.Numerics.Distributions.Sample
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> WorkflowOutput
-> Disable SelectMany CheckQuiescence
    SubscribeSubject Licking
    -> Condition => #1
        WorkflowInput Source1
        -> WorkflowOutput
    BooleanProperty(Value=true) => #2
    #1, #2 -> Merge => #3
    WorkflowInput Source1
    -> PropertyMapping(DueTime) => #5
    #3, #5 -> CreateObservable
        ExternalizedMapping(DueTime)
        -> Timer(DueTime=PT2S, Period=PT0S)
        -> WorkflowOutput
    -> Switch
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany ShowStim => #8
    WorkflowInput Source1 => #0
    SubscribeSubject trialTy => #1
    SubscribeSubject trialNumber => #2
    #0, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Value) => #5
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #7
    #5, #7 -> Index(Operand=IntProperty(Value=5))
    -> MulticastSubject trialType
    SubscribeSubject trialNumber => #10
    #0, #10 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Value) => #13
    SubscribeSubject trialSpeakerID => #14
    #0, #14 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #16
    #13, #16 -> Index(Operand=IntProperty(Value=5))
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=C:\Users\EphysPC\Desktop\Bonsai\Bonsai\Extensions\EnableDisableChannel.bonsai)
    -> MulticastSubject AudioSwitchCommands
    SubscribeSubject trialNumber => #21
    #0, #21 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Value) => #24
    SubscribeSubject trialSoundID => #25
    #0, #25 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #27
    #24, #27 -> Index(Operand=IntProperty(Value=5))
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> PropertyMapping(Payload)
    -> Bonsai.Harp.CreateMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=2)
    -> MulticastSubject "SoundCard Commands"
    -> WorkflowOutput
    #0 -> SelectMany StimOn
        SubscribeSubject trialNumber => #0
        SubscribeSubject trialLED => #1
        WorkflowInput Source1 => #2
        #2, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #4
        #2, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #7
        #7, #4 -> Index(Operand=IntProperty(Value=5))
        -> PublishSubject RGBLedStimulus
        -> Delay(DueTime=PT0.001S)
        -> WorkflowOutput

        Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray => #13
        SubscribeSubject RGBLedStimulus
        -> Condition
            WorkflowInput Source1
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Subtract(Operand=IntProperty(Value=1)) => #16
        #13, #16 -> CombineLatest
        -> Index
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
    -> Delay(DueTime=PT0.15S)
    -> SelectMany StimOFF
        WorkflowInput Source1
        -> Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray
        -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
        -> WorkflowOutput
    -> Delay(DueTime=PT0.05S)
    -> SelectMany StimOn
        SubscribeSubject trialNumber => #0
        SubscribeSubject trialLED => #1
        WorkflowInput Source1 => #2
        #2, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #4
        #2, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #7
        #7, #4 -> Index(Operand=IntProperty(Value=5))
        -> PublishSubject RGBLedStimulus
        -> Delay(DueTime=PT0.001S)
        -> WorkflowOutput

        Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray => #13
        SubscribeSubject RGBLedStimulus
        -> Condition
            WorkflowInput Source1
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Subtract(Operand=IntProperty(Value=1)) => #16
        #13, #16 -> CombineLatest
        -> Index
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
    -> Delay(DueTime=PT0.15S)
    -> SelectMany StimOFF
        WorkflowInput Source1
        -> Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray
        -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
        -> WorkflowOutput
    -> Delay(DueTime=PT0.05S)
    -> SelectMany StimOn
        SubscribeSubject trialNumber => #0
        SubscribeSubject trialLED => #1
        WorkflowInput Source1 => #2
        #2, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #4
        #2, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #7
        #7, #4 -> Index(Operand=IntProperty(Value=4))
        -> PublishSubject RGBLedStimulus
        -> Delay(DueTime=PT0.001S)
        -> WorkflowOutput

        Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray => #13
        SubscribeSubject RGBLedStimulus
        -> Condition
            WorkflowInput Source1
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Subtract(Operand=IntProperty(Value=1)) => #16
        #13, #16 -> CombineLatest
        -> Index
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
    -> Delay(DueTime=PT0.15S)
    -> SelectMany StimOFF
        WorkflowInput Source1
        -> Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray
        -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
        -> WorkflowOutput
    -> Delay(DueTime=PT0.05S)
    -> SelectMany StimOn
        SubscribeSubject trialNumber => #0
        SubscribeSubject trialLED => #1
        WorkflowInput Source1 => #2
        #2, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #4
        #2, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #7
        #7, #4 -> Index(Operand=IntProperty(Value=4))
        -> PublishSubject RGBLedStimulus
        -> Delay(DueTime=PT0.001S)
        -> WorkflowOutput

        Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray => #13
        SubscribeSubject RGBLedStimulus
        -> Condition
            WorkflowInput Source1
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Subtract(Operand=IntProperty(Value=1)) => #16
        #13, #16 -> CombineLatest
        -> Index
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
    -> Delay(DueTime=PT0.15S)
    -> SelectMany StimOFF
        WorkflowInput Source1
        -> Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray
        -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
        -> WorkflowOutput
    -> Delay(DueTime=PT0.05S)
    -> SelectMany StimOn
        SubscribeSubject trialNumber => #0
        SubscribeSubject trialLED => #1
        WorkflowInput Source1 => #2
        #2, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #4
        #2, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #7
        #7, #4 -> Index(Operand=IntProperty(Value=4))
        -> PublishSubject RGBLedStimulus
        -> Delay(DueTime=PT0.001S)
        -> WorkflowOutput

        Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
        -> ToArray => #13
        SubscribeSubject RGBLedStimulus
        -> Condition
            WorkflowInput Source1
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Subtract(Operand=IntProperty(Value=1)) => #16
        #13, #16 -> CombineLatest
        -> Index
        -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
        -> MulticastSubject RGBLedCommands
-> Delay(DueTime=PT0.5S)
-> SelectMany CheckLicking
    SubscribeSubject Licking
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> IntProperty(Value=2) => #2
    ExternalizedMapping(DueTime(DisplayName=TimeToLick))
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> IntProperty(Value=1) => #5
    #2, #5 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Take(Count=1) => #11
-> Condition Lick => #12
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> Condition Hit
    SubscribeSubject trialType
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> SelectMany givereward
    IntProperty(Value=1)
    -> Take(Count=1)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital0)
    -> MulticastSubject BhvCommand
    -> WorkflowOutput
-> StringProperty(Value=reward) => #15
#12 -> Condition FalseAlarm
    SubscribeSubject trialType
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> SelectMany TimeOut
    Timer(DueTime=PT4S, Period=PT0S)
    -> WorkflowOutput
-> StringProperty(Value=FalseAlarm) => #18
#11 -> Condition NoLick => #19
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> Condition Miss
    SubscribeSubject trialType
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> SelectMany TimeOut
    Timer(DueTime=PT0S, Period=PT0S)
    -> WorkflowOutput
-> StringProperty(Value=Miss) => #22
#19 -> Condition CorrectRejection
    SubscribeSubject trialType
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> SelectMany Nothing
    Timer(DueTime=PT0S, Period=PT0S)
    -> WorkflowOutput
-> StringProperty(Value=CorrectRejection) => #25
#15, #18, #22, #25 -> Merge => #26
-> BehaviorSubject SavePerformance => #27
#26 -> GroupWorkflow Trigger2Cam => #28
    WorkflowInput Source1
    -> Take(Count=1)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
    -> MulticastSubject BhvCommand
    -> WorkflowOutput
#8 -> Delay(DueTime=PT1S)
-> SelectMany StimOFF => #30
    WorkflowInput Source1 => #0
    -> Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\LedStimulus.csv", ListSeparator=",", ScanPattern=%B, SkipRows=1)
    -> ToArray
    -> Index(Operand=IntProperty(Value=0))
    -> Bonsai.Harp.CF.RgbArrayCommand(Type=Update64)
    -> MulticastSubject RGBLedCommands
    -> WorkflowOutput
    #0 -> IntProperty(Value=-1)
    -> IncludeWorkflow(Path=C:\Users\EphysPC\Desktop\Bonsai\Bonsai\Extensions\EnableDisableChannel.bonsai)
    -> MulticastSubject AudioSwitchCommands
#27, #30, #28 -> Zip
-> Take(Count=1)
-> GroupWorkflow TrialNumber
    WorkflowInput Source1 => #0
    SubscribeSubject trialNumber => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject trialNumber
    -> WorkflowOutput
-> Repeat

Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false)
-> BooleanProperty(Value=true) => #36
Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=200, GrabMode=BufferFrames) => #37
-> MemberSelector(Selector=Image)
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Crop(RegionOfInterest(X=551, Y=435, Width=70, Height=69))
-> Bonsai.Dsp.Average
-> MemberSelector(Selector=Val0) => #42
ExternalizedMapping(Value(DisplayName=reach_thresh))
-> DoubleProperty(Value=73)
-> PropertyMapping(Value) => #45
#42, #45 -> GreaterThan(Operand=DoubleProperty(Value=800)) => #46
Source1=#36, Source3=#46 -> Merge
-> DistinctUntilChanged
-> PublishSubject Licking
#37 -> MemberSelector(Selector=Metadata)
-> MemberSelector(Selector=embeddedGPIOPinState)
-> NestedWorkflow ThresholdPin0 => #52
    WorkflowInput Source1
    -> BitwiseAnd(Operand=WorkflowProperty<System.UInt32>(Value=536870912))
    -> DistinctUntilChanged
    -> Condition IsPinActive
        WorkflowInput Source1
        -> GreaterThan(Operand=WorkflowProperty<System.UInt32>(Value=0))
        -> WorkflowOutput
    -> WorkflowOutput
#37, #52 -> TriggeredWindow(Count=nil)
-> SelectMany SaveVideos
    WorkflowInput Source1 => #0
    SubscribeSubject ExpName => #1
    -> Add(Operand=StringProperty(Value=video.csv))
    -> PropertyMapping(FileName) => #3
    #0, #3 -> Bonsai.IO.CsvWriter
      FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\camera_tests\videos\29Mar2022_PC19_video.csv"
      Append=true
      Overwrite=false
      Suffix=FileCount
      IncludeHeader=true
      Selector: Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter,Metadata.embeddedGPIOPinState,Metadata.embeddedExposure,Metadata.embeddedFrameCounter,Metadata.embeddedShutter
    -> MemberSelector(Selector=Image) => #5
    #1 -> Add(Operand=StringProperty(Value=video.avi))
    -> PropertyMapping(FileName) => #7
    #5, #7 -> Bonsai.Vision.VideoWriter
      FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\camera_tests\videos\29Mar2022_PC19_video.avi"
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=200
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> WorkflowOutput
#37 -> MemberSelector(Selector=Metadata)
-> MemberSelector(Selector=embeddedTimeStamp) => #56
#46, #56 -> Zip
-> Condition => #58
    WorkflowInput Source1
    -> DistinctUntilChanged
    -> BooleanProperty(Value=true)
    -> WorkflowOutput
SubscribeSubject ExpName
-> Add(Operand=StringProperty(Value=licking.csv))
-> PropertyMapping(FileName) => #61
#58, #61 -> Bonsai.IO.CsvWriter
  FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\camera_tests\videos\29Mar2022_PC19_licking.csv"
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Bonsai.IO.CsvReader(FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\SessiontTrialParameters\trial_timeline.csv", ListSeparator=",", ScanPattern=%i, SkipRows=0)
-> Disable Bonsai.Numerics.Permutation => #64
-> Index(Operand=IntProperty(Value=1))
-> ToArray
-> BehaviorSubject trialLED
#64 -> Index(Operand=IntProperty(Value=0))
-> ToArray
-> BehaviorSubject trialTy
#64 -> Index(Operand=IntProperty(Value=2))
-> ToArray
-> BehaviorSubject trialSoundID
#64 -> Index(Operand=IntProperty(Value=3))
-> ToArray
-> BehaviorSubject trialSpeakerID
#64 -> Index(Operand=IntProperty(Value=4))
-> ToArray
-> BehaviorSubject trialAttenuation

GroupWorkflow ExperimentName
    StringProperty(Value="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\camera_tests\videos\") => #0
    ExternalizedMapping(Value) => #1
    #0, #1 -> Add(Operand=StringProperty(Value=29Mar2022_PC19))
    -> Add(Operand=StringProperty(Value=_))
    -> BehaviorSubject ExpName
    -> WorkflowOutput

SubscribeSubject SavePerformance => #81
SubscribeSubject ExpName
-> Add(Operand=StringProperty(Value=performance.csv))
-> PropertyMapping(FileName) => #84
#81, #84 -> Bonsai.IO.CsvWriter
  FileName="C:\Users\EphysPC\Desktop\Bonsai\Bonsai info\camera_tests\videos\29Mar2022_PC19_performance.csv"
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

IntProperty(Value=0)
-> BehaviorSubject trialNumber

IntProperty(Value=0)
-> BehaviorSubject trialType

Disable Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
-> Disable Bonsai.Harp.CF.BehaviorCommand(Type=StartPwm, Mask=Digital3)
-> Disable MulticastSubject BhvCommand
